#pragma rtGlobals=1		// Use modern global access method.
#include <WaveSelectorWidget>
#include <PopupWaveSelector>


//This analysis routine was originally Written  BY DS and BR (whoever they are).
//Andre Dagostin improved the old routine with:
//_ Better user interface
//_ Sliding average search for PSCs using an EPSC template
//_ Added fields to input different ariables to improve PSC search and analysis
//_Changes the way the output data is stored (From 1D waves to matrices)
//The EPSC template used for EPSC detection is based on the article:
//Journal of Physiology (1993), 472, pp. 615-663 615 
//QUANTAL COMPONENTS OF UNITARY EPSCs AT THE MOSSY FIBRE SYNAPSE ON CA3 PYRAMIDAL CELLS OF RAT HIPPOCAMPUS BY P. JONAS, G. MAJOR* AND B. SAKMANN


Menu "Macros"

	Submenu "HvG Lab Analysis"
		"DS initialize", Prev_DS()
	End
	
End

//1 ******************************************************************************************************

Function Prev_DS()

	String /g root:Info="       Start new or retrieve existing analysis?       "
	newpanel /k=1 /n=What_to_do /w=(300,200,800,350) as "Choose Wisely"
	Titlebox  TB1, Fsize=16, Frame=0, Anchor=LT, Pos={60,20}, Size={1,1}, Variable= Root:Info
	Button New, 		Win=What_to_do, Fsize=18, pos={30,85}, Size = {120,40}, Title="New", proc=DFR
	Button Existing, 	Win=What_to_do, Fsize=18, pos={190,85}, Size = {120,40}, Title="Existing", proc=WaveSelectorPanel
	Button Cancel_Select, 		Win=What_to_do, Fsize=18, pos={350,85}, Size = {120,40}, Title="Close", proc=Instructions_Handling

End
//1 ******************************************************************************************************
//Checks for the Minis datafolder, creates it if it doesn't exists or asks for the user to properly set it
Function DFR(CtrlName):Buttoncontrol

	String CtrlName
	Svar /sdfr=root: Host_Datafolder
	KillWindow What_to_do
	if (datafolderexists("minis")==0 && stringmatch(getdatafolder(1),"*:Minis*")!=1)
		Newdatafolder/s Minis
		Host_Datafolder=Getdatafolder(1)
		DS_initialize()
	else
		If (Stringmatch(Getdatafolder(0),"Minis")==1)
			DS_initialize()
		else
			String /g root:Info="        Set the "+num2char(34)+"Minis"+num2char(34)+" datafolder and restart the Function!      "
			newpanel /k=1 /n=Instructions /w=(300,200,800,350)
			Titlebox  TB1, Fsize=16, Frame=0, Anchor=LT, Pos={20,20}, Size={1,1}, Variable= Root:Info
			Button ok, Win=Instructions, Fsize=18, pos={150,85}, Size = {200,40}, Title="Got it!", proc=Instructions_Handling
		EndIf
	endif

end

//1 ******************************************************************************************************

Function New_Ananlysis(CtrlName):Buttoncontrol

	String CtrlName
	SVar /sdfr=root: Host_Datafolder
	Variable i
	String DF_Name="Minis"
	Host_Datafolder=getdatafolder(1)
	String Ending = stringfromlist(itemsinlist(Host_Datafolder,":")-1,Host_Datafolder,":")+":"
	setdatafolder $RemoveEnding(Host_Datafolder, Ending)
	do
		if (datafolderExists(DF_Name)==1)
			DF_Name="Minis"+num2str(i)
			i+=1
		Else
			Break
		Endif
	while (1)
	Host_Datafolder=RemoveEnding(Host_Datafolder, Ending)+DF_Name
	NewDataFolder /s $Host_Datafolder
	DS_initialize()

End

//2 ******************************************************************************************************
//Handles the message generated by the DFR procedure
Function Instructions_Handling(Ctrlname):Buttoncontrol

	String CtrlName
	StrSwitch (CtrlName)
		Case "ok":
			Killwindow Instructions
			Break
		Case "Cancel_It":
			Killwindow Analysis_Minis
			Break
		Case "Cancel_Pan":
			KillWindow All_Histograms
			Break
		Case "Cancel_Seg":
			KillWindow Mini_Seg
			Break
		Case "Cancel_Select":
			KillWindow What_to_do
			Break
	EndSwitch

end

//3 ******************************************************************************************************
// Initial values for the analysis parameters
Function DS_initialize()
	
	String This_DF=getdatafolder(1)
	Setdatafolder Root:
	variable /G 	G_mininumber=			0
	variable /G 	G_sweeps=				1
	variable /G 	G_threshold=			-14e-12
	variable /G 	G_signalwindow=			10
	variable /G 	G_noisewindow=			25
	variable /G 	G_stepsize=				3
	variable /G 	G_showtime=			0
	variable /G 	G_jump=				170
	variable /G 	G_pointnumber=			0
	variable /G 	G_Rise_Tau=			0.6
	variable /G 	G_Decay_Tau=			0.00017
	variable /G 	G_Mini_Size=			150
	variable /G 	G_Decay_time=			50 
	variable /G 	G_Baseline=				50
	variable /G 	G_Bin_Size_Freq= 		0.001
	variable /G 	G_Num_BIn_Freq= 		30
	variable /G 	G_Bin_Size_Amp= 		-5e-12
	variable /G 	G_Num_BIn_Amp= 		50
	variable /G 	G_Bin_Size_Char=		-1e-12
	variable /G 	G_Num_BIn_Char=		50
	variable /G 	G_Bin_Size_Rise=		10e-6
	variable /G 	G_Num_BIn_Rise=		50
	variable /G 	G_Bin_Size_Decay=		10e-6
	variable /G 	G_Num_BIn_Decay=		50
	Variable /G G_Tolerance=			0.6
	String/g Host_Datafolder = This_DF
	Dowindow /K Minicontroller
	Setdatafolder Host_Datafolder
	Minicontroller()
	
Endmacro

//4 ******************************************************************************************************
// Well, kill all results, right?
Function DS_killallresults()

	string the_wavelist,currentwana
	variable i
	SVar /sdfr=root: Host_Datafolder, Isolated_path	
	String List=Tracenamelist("Analysis_Minis#Mini_Wave",",",1)
	Execute "Removefromgraph/z /W=Analysis_Minis#Mini_Wave  "+removeending(List)	
	List=Tracenamelist("Analysis_Minis#Data_Display",",",1)
	Execute "Removefromgraph/z /W=Analysis_Minis#Data_Display "+removeending(List)	
	Setdatafolder $Host_datafolder
	list=Wavelist("*",";","")
	Controlinfo /W=Analysis_minis Use_Template
	if (V_Value)
		//print "here" 
		list=removefromlist("epsc_Template_ori",list)
		//print list
	endif 
	//abort
	ControlInfo /W=Analysis_Minis Which_Wave
	For (i=0;i<itemsinlist(list);i+=1)
		If (Stringmatch(Stringfromlist(i,list),S_value)!=1)
			killwaves /z $Stringfromlist(i,list)
		endif
	Endfor

Endmacro

//******************************************************************************************************
// kills the progression window in case it is opened (due to an error or something)
Function Kill_Child_Win()
	
	String List=childwindowlist("Analysis_minis")
	Variable i
	For (i=0;i<itemsinlist(list);i+=1)
		If (Stringmatch(Stringfromlist(i,list),"Mini_Detection")==1)
			Killwindow Analysis_Minis#Mini_Detection
		EndIf
	Endfor
	
End

//******************************************************************************************************
// Mini detection starts here
Function DS_isolateminis(Val_Display)	
	variable Val_Display
	silent 1
	Kill_Child_Win()
	SVar /sdfr=root: Host_Datafolder
	variable avg_noise, avg_signal, wavenumpoints, i, events, wavenumber, timestamp
	string   currentwana
	nvar /sdfr=root: G_noisewindow, G_signalwindow, G_stepsize, G_sweeps, G_threshold, G_jump, G_Mini_Size, G_Decay_Time, G_Baseline
	Variable Percent_One
	String Progress
	Setdatafolder $Host_Datafolder
	print "**********---------Start Isolation---------**********"
	make /N=0 /O a_Timestamp
	Dowindow /W=Analysis_minis Data_Display
	Wave Minis
	if (V_Flag==1)
		Execute "removefromgraph /W=Analysis_minis#Data_Display "+removeEnding(RemoveFromlist("a_Timestamp",wavelist("*",",","Win:Analysis_minis#Data_Display"),","))
	Endif
	ControlInfo /W=Analysis_Minis Which_Wave
	currentwana = S_Value//StringFromList(wavenumber,the_wavelist)
	print currentwana
	wavestats /Q /M=1 $currentwana
	wavenumpoints =  V_npnts+V_numNans+V_numINFs
	dowindow /W=Analysis_minis Mini_detection
	If (V_Flag==1 && i>0)
		Execute "Killwindow Analysis_minis#Mini_detection"
	endif	
	Progress=Num2str(Floor(i/Numpnts($CurrentWana)*100))+" %"
	
	If (i==0 && Val_Display==1)
		NewPanel /K=1 /N=Mini_Detection /Host=Analysis_Minis /Ext=0 /W=(10,0,250,290)
		Titlebox Percentage Frame=0, Pos={100,240}, Size={20,10}, Fsize=24, Title=Progress, Win=Analysis_Minis#Mini_Detection
		Make/O /N=2 Progression_Minis={Floor(i/Numpnts($CurrentWana)*100),100-Floor(i/Numpnts($CurrentWana)*100)}
		Make/O /T /N=2 Progression_Txt={"Whole","Percent"}
		SimplePieChart(125,125,100,Progression_Minis,Progression_Txt)
	EndIf
	i = G_noisewindow
	//Make/o/n=(G_Mini_Size) AVGs	
	ControlINfo /W=Analysis_minis Positive
	Variable Absolute=V_Value
	
	do //inside the actual sweep
	//analyse signal- and noisewindows		
		
		wavestats /Q /M=1 /R=[i-G_noisewindow, i] $currentwana
		avg_noise = V_avg
		wavestats /Q /M=1 /R=[i+5, i +5+ G_signalwindow] $currentwana //I am trying the average of a small cluster of points a little ahead of the serach loop
		avg_signal = V_avg
		
		//mini detected?
		Switch (Absolute)
			Case 0:
				if ((avg_signal-avg_noise)<=G_threshold)
					wave sourcewave = $currentwana
					wavestats/q /r=[i-G_Baseline,i+(G_Mini_Size-G_Baseline)/2] $currentwana
					events += 1
					if (Detect_Mini(Events, Sourcewave, mEPSC, G_Mini_size, V_Minloc)==1)				
						//Timestamp of mini
						timestamp = wavenumber*6+i * (deltax($currentwana))//1e05
						InsertPoints (events-1),1, a_Timestamp
						a_Timestamp[(events-1)]=timestamp	
					Else
						events -= 1	
					endif
				i += G_jump
				endif
				Break
			Case 1:
				if ((avg_signal-avg_noise)>=ABS(G_threshold))
					wave sourcewave = $currentwana
					wavestats/q /r=[i-G_Baseline,i+(G_Mini_Size-G_Baseline)/2] $currentwana
					events += 1
					if (Detect_Mini(Events, Sourcewave, mEPSC, G_Mini_size, V_Maxloc)==1)				
						//Timestamp of mini
						timestamp = wavenumber*6+i * (deltax($currentwana))//1e05
						InsertPoints (events-1),1, a_Timestamp
						a_Timestamp[(events-1)]=timestamp	
					Else
						events -= 1	
					endif
				i += G_jump
				endif
				Break
		EndSwitch
//******		
		If(Floor(i/Numpnts($CurrentWana)*100)>(Percent_One+1))
			Progression_Minis[1]=	100-Floor(i/Numpnts($CurrentWana)*100)
			Progression_Minis[0]=	Floor(i/Numpnts($CurrentWana)*100)
			SimplePieChart(125,125,100,Progression_Minis,Progression_Txt)	
			Percent_One=Floor(i/Numpnts($CurrentWana)*100)
			Progress=Num2str(Percent_One)+" %"
			Titlebox Percentage Title=Progress
			DoUpdate
			pauseupdate
		EndIf	
//******
//move analysis windows
		i += G_stepsize		
		if (Val_Display==0)
			break
		endif	
	while (i < wavenumpoints)
	print num2str(events) + " mEPSCs detected"	
	wavenumber += 1		
	Killwindow /z Analysis_minis#Mini_Detection
	//create parameter waves
	make /N=(events) /O a_Amplitude, a_Risetime, a_Decaytime, a_Charge, a_Baseline
	make /N=((events),2) /O Risetime_Xs
	print "**********---------End Isolation---------**********"
	print "                                                     ---                                                  "	
	if (Val_Display==1)
	DS_analyseminis()
	endif
	Killwindow /z Analysis_minis#Mini_Detection
	if (strlen (wavelist("*",";","Win:Analysis_minis#Data_Display"))>0)
		Execute "removefromgraph /W=Analysis_minis#Data_Display "+Removeending(wavelist("*",",","Win:Analysis_minis#Data_Display"),",a_Timestamp,")
	endif	
	DIsplay_mini_Graph()
	Display_and_Modify()
	if (Val_Display==0)
		abort
	endif	
	Wave Minis, All_Baseline_Vals
	Setscale/p x,0,(deltax($CurrentWana)),"s",Minis,All_Baseline_Vals
	SetVariable G_mininumber, Win=Analysis_Minis, Limits={0,(Numpnts(a_Amplitude)-1),1}
	Killwaves/Z Progression_Minis,Progression_txt, Degrees, res, w_coef,W_sigma, C_Wana//, AVGs
	Filter_by_Decay()
	Make_AVG_PSC("Final")
	String Final= Update_Output_Text()//"# of PSCs : "+num2str(numpnts(a_amplitude))+"\rAvg amplitude: "+SAmp_Final+StringFromlist(0,Unity(a_Amplitude,1,0))+"A\rAvg frequency: "+Num2Str(   NumPnts(a_Amplitude)/(a_Timestamp[Numpnts(a_Timestamp)-1]-a_Timestamp[0]))+" Hz"
	TitleBox  Results Win=Analysis_Minis, Pos={20, 480}, Title=Final, Fsize=14, Frame=0
	
End

// ******************************************************************************************************
// Updates the info on the detected minis displyes in the "Detection" tab

Function /S Update_Output_Text()
	
	Wave a_amplitude, a_timestamp
	Variable AVG_Wave=Mean(a_Amplitude)
	String SAmp_Final =num2Str(Avg_Wave)	
	SAmp_Final =RemoveEnding (SAmp_Final, "e-"+stringfromlist(( itemsinlist(SAmp_Final,"-")-1),SAmp_Final,"-"))
	AVG_Wave=Str2Num(SAmp_Final)*Str2Num(StringFromlist(1,Unity(a_Amplitude,1,0)))
	SAmp_Final=Num2Str(AVG_Wave)	
	String Final="# of PSCs : "+num2str(numpnts(a_amplitude))+"\rAvg amplitude: "+SAmp_Final+StringFromlist(0,Unity(a_Amplitude,1,0))+"A\rAvg frequency: "+Num2Str(   NumPnts(a_Amplitude)/(a_Timestamp[Numpnts(a_Timestamp)-1]-a_Timestamp[0]))+" Hz"
	Return Final
	
End

// ******************************************************************************************************
//Averages and displays the average PSCs

Function Make_AVG_PSC(ControlName):ButtonControl

	String ControlName
	Wave AVG_d
//	Make/O/N=(dimsize(minis,0)) AVG_Minis
//	Variable i
//	For(i=0;i<numpnts(AVG_Minis);i+=1)
//		Matrixop /FREE /O /S temp=row(minis, i)
//		AVG_Minis[i]= mean(temp)
//	Endfor
	If (StringMatch(Controlname,"AVG_PSC")==1)
		Dowindow/K Average
		Display/k=1 /N=Average AVG_d		
	EndIF
//	Setscale/P x,0,Dimdelta(minis,0),"s",AVG_Minis
	
end
// ******************************************************************************************************
//Manages the comparison between the sliding average and the trace itself and reports a positive or negative match

Function Detect_Mini(Evt_Num, Sourcewave, mEPSC, Mini_size, V_Minloc)

	Variable Evt_Num
	Wave Sourcewave, mEPSC
	Variable Mini_Size, V_Minloc
	NVar /sdfr=root: G_Mini_Size, G_Baseline, G_Decay_Tau, G_Rise_Tau
	//Wave AVGs
	//duplicate/o No_die, EPSC_Template
	ControlINfo /W=Analysis_minis Positive
	Variable Absolute=V_Value
	Controlinfo /W=Analysis_Minis Use_Template
	if (V_Value)
		if (waveexists (epsc_Template_ori)==1)
		Duplicate/o epsc_Template_ori, EPSC_Template
		else
		Controlinfo /w=Analysis_Minis Which_wave
		If (Absolute==0)
			make/o/n=(G_Mini_Size) epsc_Template= -1*  (1-exp(-(x*deltax($S_Value))/G_Rise_Tau))*  (exp(-(x*deltax($S_Value))/G_Decay_Tau))
		Else
			make/o/n=(G_Mini_Size) epsc_Template=  (1-exp(-(x*deltax($S_Value))/G_Rise_Tau))*  (exp(-(x*deltax($S_Value))/G_Decay_Tau))
		EndIF
		endif
	else
		If (Absolute==0)
			make/o/n=(G_Mini_Size) epsc_Template= -1*  (1-exp(-(x*deltax(Sourcewave))/G_Rise_Tau))*  (exp(-(x*deltax(Sourcewave))/G_Decay_Tau))
		//EPSC_Template*=-1
		Else
			make/o/n=(G_Mini_Size) epsc_Template=  (1-exp(-(x*deltax(Sourcewave))/G_Rise_Tau))*  (exp(-(x*deltax(Sourcewave))/G_Decay_Tau))
//		EPSC_Template
		EndIF
	endif
	variable ok=Sliding_Avg(x2pnt(sourcewave,V_Minloc),Sourcewave)
	if (ok>0)
	
		If (Evt_Num==1 || waveexists(Minis)==0)
			Make/o/n=(G_Mini_Size) Minis
			Make/o/n=(10) All_Baseline_Vals
		else
			insertpoints /m=1 NumPnts(Minis),1,Minis
			insertpoints /m=1 NumPnts(All_Baseline_Vals),1,All_Baseline_Vals
		endif
			Minis[][Evt_num-1]= sourcewave[x+(x2pnt(sourcewave,V_Minloc)-G_Baseline)]	
			All_Baseline_Vals[][Evt_num-1]=Mean(sourcewave,(V_Minloc-G_Baseline*deltax(sourcewave)), (V_Minloc-(G_Baseline-10)*deltax(sourcewave)))
			//AVGs[]+=sourcewave[x+(x2pnt(sourcewave,V_Minloc)-G_Baseline)]			
		Return 1
	Else
		Return 0
	endif

end
// ******************************************************************************************************
//Compares the sliding template to the trace to find (or not) the event

Function Sliding_Avg(Start_Pnt,Sourcewave)

	Variable Start_Pnt
	Wave SourceWave
	variable i,tau,k, Begin_Match, Finish_Match, Percent_Mini_Size,offset, scale,minim
	NVar /sdfr=root: G_Mini_Size, G_Tolerance,G_noisewindow
	tau=2e-4
	Make/o/n=1 res
	Make/o/n=1 crit
	Percent_Mini_Size=floor(G_Mini_Size/5)
	Begin_Match=Start_Pnt-Percent_Mini_Size
	Finish_Match=Start_Pnt+G_Mini_Size-percent_mini_size	
	Controlinfo/W=Analysis_minis Positive
	wavestats/q /r=[start_pnt, start_pnt+G_mini_size] SourceWave
	wave epsc_template
	Make/o/n=3 W_Coef
	offset=mean(sourcewave, pnt2x(sourcewave,Start_Pnt), pnt2x(sourcewave,Start_Pnt+G_noisewindow))

	If (V_Value==0)
		minim=wavemin(EPSC_Template)
		scale=abs(v_min-offset)
		epsc_template/=(minim*-1)
	Else
		minim=wavemax(EPSC_Template)
		scale=abs(v_max-offset)
		epsc_template/=minim
	EndIf
	epsc_template*=scale
	epsc_template+=offset
		if (Begin_Match<(numpnts(SourceWave)-(g_mini_size*2-2)))
			for (i=(Begin_Match);i<(Finish_Match);i+=1)
				Duplicate/o/r=[i,i+G_Mini_Size-1] SourceWave, Temp
				//crit[k]=Criterion(scale,offset,temp)
				res[k]=   statscorrelation(Temp,epsc_template)//W_Coef[1]
				insertpoints i+1,1,res
				insertpoints i+1,1,crit
				k+=1
			endfor
			
			deletepoints k,1,res
			wavestats/q res
			if (V_max>G_Tolerance)//(V_AVG+2*V_Sdev))
//	print pnt2x(sourcewave,Start_Pnt), offset
//	abort					
	return V_Maxloc
				//endif
			else
				return 0
			endif	
		endif
	return 0
	
End

// ******************************************************************************************************
//Extracts all the parameters from the detected event 

Function DS_analyseminis()

	silent 1
	variable peak, baseline, twentypercent, eightypercent, amplitude, risetime, decaytime, charge,Absolute
	variable peakpn, twentypn, wavenumber, xposition, endofminipn, Percent_One, Mini_Wave_Size, Start_Fit_Pt
	
	string the_wavelist, fitwindowname,Progress
	wave a_Amplitude, a_Risetime, a_Decaytime, a_Charge, mininumbers,a_Baseline,Minis, C_Wana, Risetime_Xs
	nvar /sdfr=root: G_Mini_Size, G_Baseline, G_Decay_time
	SVar /sdfr=root: Host_Datafolder
	Nvar /sdfr=root: DeltaX_Main_Wave
	print "**********---------Start Analysis---------**********"
	Dowindow /K Monitor 
	SetDatafolder $Host_Datafolder
	Make/o/n=(G_Mini_Size) C_Wana
	Mini_Wave_Size=DimSize (Minis,1)	
	Wavenumber=0
	make /O /N=3 W_coef
	make/o/n=1 W_Fitconstants
	Make/o/n=1 Start_Fit
	Make/o /n=(ceil(G_Mini_size/3)) All_Decay_time
	ControlINfo /W=Analysis_minis Positive
	Absolute=V_Value
	do //for all "mEPSC*" waves
		C_Wana=Minis[p][wavenumber]
		Controlinfo /W=Analysis_Minis Which_Wave
		setscale /p x,0,Deltax($S_Value),"s",c_Wana	
		wavestats /Q /M=1 /R=[0,10] C_Wana //find baseline Original: 450
		baseline = V_avg
		wavestats /Q /M=1 C_Wana 
		If (Absolute==0)
		peak = V_min; peakpn =V_MinRowLoc// x2Pnt(C_Wana, V_minloc) //* 1e05
		amplitude = peak - baseline
		Else
		peak = V_max; peakpn =V_MaxRowLoc
		amplitude = baseline-Peak
		EndIf
		a_Amplitude[xposition]= amplitude
		a_Baseline[xposition]=baseline
		
		//Risetime
		If (Absolute==0)
			twentypercent = amplitude * 0.2 + baseline
			eightypercent = amplitude * 0.8 + baseline
		Else
			twentypercent = baseline-amplitude * 0.2 
			eightypercent = baseline-amplitude * 0.8 
		EndIF
		findlevel /Q  /R=[0,peakpn] C_Wana, twentypercent 
		twentypn=V_LevelX
		findlevel /Q /R=[0, peakpn] C_Wana, eightypercent 
		a_Risetime[xposition]= (V_LevelX - twentypn)
		Risetime_Xs[xposition][q]={{twentypn},{V_LevelX}}
		//Charge
		Duplicate /O C_Wana avgsubtracted
		avgsubtracted -= baseline
		Integrate avgsubtracted /D=integratedmini
		charge = sum (integratedmini)// integratedmini[endofminipn+100] - integratedmini[(twentypn-30)] //original: 300 and 100
		a_Charge[xposition]= charge
	
		//Decaytime		
		If (Absolute==0)
			eightypercent = amplitude * 0.8 + baseline //it's actually seventy, i just did not want another variable
		Else
			eightypercent = baseline-amplitude * 0.8
		EndIf
		findlevel /Q /P /R=[peakpn, G_Mini_Size] C_Wana, eightypercent // Original: 490
		Start_Fit_Pt= round(V_Levelx)
		If(Wavenumber>0)
		insertpoints/M=1 Wavenumber, 1, All_Decay_time
		Insertpoints Wavenumber, 1,Start_Fit
		Endif
		Variable V_FitError=0
		CurveFit/Q /NTHR=0 /N /W=2 exp_XOffset  C_Wana[Start_Fit_Pt, numpnts(C_Wana)-1] /D /NWOK
		a_Decaytime[xposition]= W_coef(2)
		All_Decay_time[][Wavenumber]=W_coef[0]+W_coef[1]*exp(-(((x+Start_Fit_Pt)*Deltax(C_Wana))-W_fitConstants[0])/W_coef[2])
		Start_Fit[wavenumber]=Start_Fit_Pt
		
		//clean up and proceed	
		Progress=Num2str(Floor(wavenumber/Mini_Wave_Size*100))+" %"
		If (wavenumber==0)
			NewPanel /K=1 /N=Mini_Detection /Host=Analysis_Minis /Ext=0 /W=(10,0,250,290)
			Titlebox Percentage Frame=0, Pos={100,240}, Size={20,10}, Fsize=24, Title=Progress, Win=Analysis_Minis#Mini_Detection
			Make/O /N=2 Progression_Minis={Floor(wavenumber/Dimsize(Minis,1)*100),100-Floor(wavenumber/Mini_Wave_Size*100)}			
			Make/O /T /N=2 Progression_Txt={"Whole","Percent"}
			SimplePieChart(125,125,100,Progression_Minis,Progression_Txt)
		EndIf
		//******		
			If(Floor(wavenumber/Mini_Wave_Size*100)>(Percent_One+5))
				Progression_Minis[1]=	100-Floor(wavenumber/Mini_Wave_Size*100)
				Progression_Minis[0]=	Floor(wavenumber/Mini_Wave_Size*100)
				SimplePieChart(125,125,100,Progression_Minis,Progression_Txt)	
				Percent_One=Floor(wavenumber/Mini_Wave_Size*100)
				Progress=Num2str(Percent_One)+" %"
				Titlebox Percentage Title=Progress
				DoUpdate
				pauseupdate
			EndIf	
		//******
		wavenumber += 1
		xposition += 1
	while (Wavenumber<Mini_Wave_Size)
	Killwaves avgsubtracted	, integratedmini
	print "**********---------End Analysis---------**********"
	wavestats /Q /M=1 a_amplitude	
	
End




// ******************************************************************************************************
// Plots the histograms based on the user input

Function DS_plothistograms(Action)
String Action
	String Unit
	variable i
	wave a_Timestamp,a_Interminitime,a_Risetime,a_Amplitude,a_Decaytime,a_Charge
	NVar /sdfr=root: G_Bin_Size_Freq, G_Num_BIn_Freq, G_Bin_Size_Amp, G_Num_BIn_Amp, G_Bin_Size_Char, G_Num_BIn_Char,G_Bin_Size_Rise,G_Num_Bin_Rise,G_Bin_Size_Decay,G_Num_Bin_Decay
	
	If(Stringmatch(Action,"Plot")==1)
		DoWindow /k All_Histograms 
		Newpanel/k=1 /n=all_histograms /w=(100,100,1080,590) as "Histograms"
		ModifYPanel /W=All_Histograms cbRGB=(65535.,65535.,65535)
		//Amplitude
		Make/N=130/D/O a_Amplitude_Hist
		Histogram/B={0,G_Bin_Size_Amp,G_Num_BIn_Amp} a_Amplitude,a_Amplitude_Hist
		Display /K=1 /Host=All_Histograms /W=(20,20,320,230) /N=Amplitudehistogram a_Amplitude_Hist as "Amplitude"
		ModifyGraph margin(right)=43
		ModifyGraph mode=5
		ModifyGraph rgb=(0,0,0)
		Label left "number ov events"
		Unit= "\\u#2Amplitude ("+replacestring (" ",stringfromlist(0,Unity(a_Amplitude,1,0)),"")+"A)"
		Label bottom Unit
		SetAxis/A/R bottom
		TextBox/N=text0/F=0/A=MT/X=0.00/Y=0.00/E "\\f01\\Z18Amplitude"
	
	//Risetime
		Make/N=50/D/O a_Risetime_Hist
	
		Histogram/B={0,G_Bin_Size_Rise,G_Num_Bin_Rise} a_Risetime,a_Risetime_Hist
		Display /K=1 /Host=All_Histograms /W=(20,260,320,470) /N=Risetimehistogram a_Risetime_Hist as "Rise time"
		ModifyGraph margin(right)=43
		ModifyGraph mode=5
		ModifyGraph rgb=(0,0,0)
		Label left "number ov events"
		Unit="\\u#2Risetime ("+replacestring (" ",stringfromlist(0,Unity(a_Risetime,1,0)),"")+"s)"
		Label bottom Unit
		SetAxis/A bottom
		TextBox/N=text0/F=0/A=MT/X=0.00/Y=0.00/E "\\f01\\Z18Risetime"
	
	//Decaytime
		Make/N=60/D/O a_Decaytime_Hist
		Histogram/B={0,G_Bin_Size_Decay,G_Num_Bin_Decay} a_Decaytime,a_Decaytime_Hist
		Display /K=1 /Host=All_Histograms /W=(340,20,640,230)/N=Decaytimehistogram a_Decaytime_Hist as "Decay"
		ModifyGraph margin(right)=43
		ModifyGraph mode=5
		ModifyGraph rgb=(0,0,0)
		Label left "number ov events"
		Unit="\\u#2Tau ("+replacestring (" ",stringfromlist(0,Unity(a_Decaytime,1,0)),"")+"s)"
		Label bottom Unit
		SetAxis/A bottom
		TextBox/N=text0/F=0/A=MT/X=0.00/Y=0.00/E "\\f01\\Z18Decaytime"
	
	//Charge
		Make/N=600/D/O a_Charge_Hist
		Histogram/B={0,G_Bin_Size_Char,G_Num_BIn_Char} a_Charge,a_Charge_Hist
		Display /K=1 /Host=All_Histograms /W=(340,260,640,470) /N=Chargehistogram a_Charge_Hist as "Charge"
		ModifyGraph margin(right)=43
		ModifyGraph mode=5
		ModifyGraph rgb=(0,0,0)
		Label left "number ov events"
		Unit="\\u#2Charge ("+replacestring (" ",stringfromlist(0,Unity(a_Charge,1,0)),"")+"C)"
		Label bottom Unit
		SetAxis/A /R bottom
		TextBox/N=text0/F=0/A=MT/X=0.00/Y=0.00/E "\\f01\\Z18Charge"
	
	//Frequency
		wavestats /Q /M=1 a_Timestamp
		i=0
		do
			Make /O /N=(V_npnts-1) a_Interminitime
			a_Interminitime[i]= a_Timestamp[(i+1)]-a_Timestamp[i]
			i+=1
		while (i<=V_npnts)
		Make/N=60/D/O a_Interminitime_Hist
		Histogram/B={0,G_Bin_Size_Freq,G_Num_BIn_Freq} a_Interminitime,a_Interminitime_Hist
		Display /K=1 /Host=All_Histograms /W=(660,20,960,230) /N=Interminitimehistogram a_Interminitime_Hist as "Inter-Event"
		ModifyGraph margin(right)=43
		ModifyGraph mode=5
		ModifyGraph rgb=(0,0,0)
		Label left "number ov events"
		Unit="\\u#2delta(Time) ("+replacestring (" ",stringfromlist(0,Unity(a_Interminitime,1,0)),"")+"s)"
		Label bottom Unit
		SetAxis/A bottom
		TextBox/N=text0/F=0/A=MT/X=0.00/Y=0.00/E "\\f01\\Z18Interminitime"
		Histogram_Panel_Vars()
	Else
		Histogram/B={0,G_Bin_Size_Amp,G_Num_BIn_Amp} a_Amplitude,a_Amplitude_Hist
		Histogram/B={0,G_Bin_Size_Rise,G_Num_Bin_Rise} a_Risetime,a_Risetime_Hist
		Histogram/B={0,G_Bin_Size_Decay,G_Num_Bin_Decay} a_Decaytime,a_Decaytime_Hist
		Histogram/B={0,G_Bin_Size_Char,G_Num_BIn_Char} a_Charge,a_Charge_Hist
		Histogram/B={0,G_Bin_Size_Freq,G_Num_BIn_Freq} a_Interminitime,a_Interminitime_Hist
	EndIF

End


Function Histogram_Panel_Vars()

	Titlebox Bin_Size_Pan, Win=All_Histograms, Fsize=14, Frame=0, Pos={735, 260}, Title="Bin size", Disable=0
	Titlebox Num_Bins_Pan, Win=All_Histograms, FSize=14, Frame=0, Pos={817,260}, Title="Num Bins", Disable=0

	Setvariable Hist_Bin_Freq_Pan, Win=All_Histograms, Pos={760,280}, Size={50,20}, Title="Frequency ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Bin_Size_Freq
	Setvariable Num_Bins_Freq_Pan, Win=All_Histograms,Pos={842,280}, Size={50,20}, Title=" ",fsize=12, bodywidth=80, Disable=0,Value=root:G_Num_BIn_Freq
	
	Setvariable Hist_Bin_Amp_Pan, Win=All_Histograms,Pos={760,305}, Size={50,285}, Title="Amplitude",fsize=12, bodywidth=80, Disable=0, Value=root:G_Bin_Size_Amp
	Setvariable Num_Bins_Amp_Pan, Win=All_Histograms, Pos={842,305}, Size={50,20}, Title=" ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Num_BIn_Amp
	
	Setvariable Hist_Bin_Charge_Pan, Win=All_Histograms, Pos={760,330}, Size={50,20}, Title="Charge (C) ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Bin_Size_Char
	Setvariable Num_Bins_Charge_Pan, Win=All_Histograms,Pos={842,330}, Size={50,20}, Title=" ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Num_BIn_Char
	
	Setvariable Hist_Bin_Rise_Pan, Win=All_Histograms,Pos={760,355}, Size={50,20}, Title="Rise (s)   ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Bin_Size_Rise
	Setvariable Num_Bins_Rise_Pan, Win=All_Histograms,Pos={842,355}, Size={50,20}, Title=" ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Num_BIn_Rise
	
	Setvariable Hist_Bin_Decay_Pan, Win=All_Histograms,Pos={760,380}, Size={50,20}, Title="Decay (s)  ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Bin_Size_Decay
	Setvariable Num_Bins_Decay_Pan, Win=All_Histograms,Pos={842,380}, Size={50,20}, Title=" ",fsize=12, bodywidth=80, Disable=0, Value=root:G_Num_BIn_Decay
	
	Button Update, Win=All_Histograms, pos={680,420},size={120,40},proc=pressplot, FSize=16, title="Update results"
	Button Cancel_Pan, Win=All_Histograms, pos={820,420},size={120,40},proc=Instructions_Handling, FSize=16, title="Close"
end

// ******************************************************************************************************

Function/S Unity(TestWave, Choice, Pnt_Num)

	Wave TestWave
	Variable Choice, Pnt_Num
	String Unit, SAmp_Final
	If (Choice==0) //One point Only to get the data from
		SAmp_Final=Num2Str(TestWave[Pnt_Num])
	Else
		SAmp_Final=Num2Str(Mean(TestWave))
	EndIF
	Variable Pwr_Amp=Str2Num(stringfromlist(( itemsinlist(SAmp_final,"-")-1),SAmp_Final,"-"))
	Variable Final_multiplier
	//Variable Pwr_Amp_Final=Ceil (Str2Num(stringfromlist(( itemsinlist(SAmp_final,"-")-1),SAmp_Final,"-"))/3)
	Variable Pwr_Amp_Final=Ceil (Pwr_Amp/3)
	VAriable Current_Amp_Unit= Str2Num(stringfromlist(( itemsinlist(SAmp_final,"-")-1),SAmp_Final,"-"))
	Variable Adjust_Dec=Str2Num(stringfromlist(( itemsinlist(SAmp_final,"-")-1),SAmp_Final,"-"))
	Switch (Pwr_Amp_Final)
		Case 1:
			Unit=" m"
			Final_multiplier=10^(3-Current_Amp_Unit)
			Break	
		Case 2:
			Unit=" u"
		Final_multiplier=10^(6-Current_Amp_Unit)
			Break
		Case 3:
			Unit=" n"
			Final_multiplier=10^(9-Current_Amp_Unit)
			Break	
		Case 4:
			Unit=" p"
			Final_multiplier=10^(12-Current_Amp_Unit)
			Break
	EndSwitch	
	Unit+=";"+Num2Str(Final_multiplier)+";"
	If(Strlen(Unit)>0)
		return unit
	Else
		Return ""
	Endif
	
End

// ******************************************************************************************************

Function pressisolate(B_Struct) : ButtonControl
	STRUCT WMButtonAction &B_Struct
	STRUCT WMCheckboxAction CB_Struct
	//String ctrlName
	if (B_Struct.eventcode!=2)
		return 0
	endif

	StrSwitch (B_Struct.ctrlName)
		case "Display_Wave":
			DS_isolateminis(0)
			break
		case "isolate":
			Controlinfo /W=Analysis_Minis Use_Template
			if (V_Value)
				template(CB_Struct)
			endif
			DS_isolateminis(1)
			break
	EndSwitch
End

Function pressplot(ctrlName) : ButtonControl
	String ctrlName
	DS_plothistograms(ctrlName)
End

Function presskillall(ctrlName) : ButtonControl
	String ctrlName
	DS_killallresults()
End

// ******************************************************************************************************

Function pressdelete(ctrlName) : ButtonControl //Delete individual Minis

	String ctrlName
	nvar /sdfr=root: G_mininumber
	variable pointnumber=G_mininumber
	wave a_Amplitude, a_Risetime, a_Decaytime, a_Charge, a_Timestamp, mininumbers,a_Baseline,Amps, Minis,Start_Fit, All_Decay_time
	Svar /sdfr=root: Host_Datafolder
	Setdatafolder $Host_Datafolder	
	Deletepoints /M=1 pointnumber,1, minis
	Deletepoints /M=1 pointnumber,1,All_Baseline_Vals
	Deletepoints /M=1 pointnumber,1,All_Decay_time
	Deletepoints pointnumber,1,a_Amplitude
	Deletepoints pointnumber,1,a_Risetime
	Deletepoints pointnumber,1,a_Decaytime
	Deletepoints pointnumber,1,a_Charge
	Deletepoints pointnumber,1,a_Timestamp
	Deletepoints pointnumber,1,a_Baseline
	Deletepoints pointnumber,1,Amps
	Deletepoints pointnumber, 1,Start_Fit
	SetVariable G_mininumber, Limits={0,(Numpnts(a_Amplitude)-1),1}
	String Final= Update_Output_Text()
	TitleBox  Results Win=Analysis_Minis, Title=Final
	Pauseupdate
	pressnext("Pressprevious")
	
End

// ******************************************************************************************************

Function pressnext(ctrlName) : ButtonControl

	String ctrlName
	Variable Limits=0
	nvar /sdfr=root: G_mininumber
	if (G_mininumber<0)
		G_mininumber=0
	endif
	Wave Minis,a_amplitude, Start_Fit, All_Decay_time,a_Decaytime//,Pt_time_Amp
	SetVariable G_mininumber, Limits={0,(Numpnts(a_Amplitude)-1),1}
	if (G_Mininumber>=(Numpnts(a_amplitude)-1))
		If (G_Mininumber>=(Numpnts(a_amplitude)-1) || Stringmatch(CtrlName,"Next")==1)
			G_Mininumber=Numpnts(a_amplitude)-1
			Limits=1
		Endif
	endif	
	if (G_Mininumber==0)
		If (G_mininumber<0 || Stringmatch(CtrlName,"pressprevious")==1)
			G_Mininumber=0
			Limits=1
		Endif
	Endif	
	If (limits==0)
		StrSwitch (CtrlName)
		Case "Next":
			G_mininumber += 1
			Modify_Point(G_mininumber,0)
			Break
		Case "pressprevious":
			G_mininumber -= 1
			Modify_Point(G_mininumber,0)
			Break
		EndSwitch
	Endif		
	Removefromgraph /z /W=Analysis_Minis#Mini_Wave Minis,All_Baseline_Vals,Amps,Start_Fit, All_Decay_time
	MatrixOP /FREE Wv_Mini=col(minis,G_MiniNumber)
	ControlInfo /W=Analysis_Minis Positive
	Variable Absolute = V_Value
	ControlInfo /W=Analysis_Minis Which_Wave 
	If (Absolute==0)
		wavestats/m=1/q Wv_Mini
		Make/n=1/o Pt_time_Amp=V_Minloc*Deltax($S_value)
	Else
		wavestats/m=1/q Wv_Mini
		Make/n=1/o Pt_time_Amp=V_Maxloc*Deltax($S_value)
	EndIF
	Setscale/p x,Start_Fit[G_MiniNumber]*deltax($S_value),Deltax($S_value),"s",All_Decay_time
	Appendtograph /W=Analysis_Minis#Mini_Wave Minis[][G_MiniNumber],All_Baseline_Vals[][G_Mininumber],All_Decay_time[][G_Mininumber]
	Appendtograph /W=Analysis_Minis#Mini_Wave Amps[G_Mininumber,G_Mininumber] vs Pt_time_Amp
	ModifyGraph /W=Analysis_Minis#Mini_Wave mode(Amps)=3, marker=19, msize(Amps)=3,rgb(Amps)=(1,4,52428)
	ModifyGraph /W=Analysis_Minis#Mini_Wave rgb(Minis)=(0,0,0)
	ModifyGraph /W=Analysis_Minis#Mini_Wave lsize(All_Baseline_Vals)=3, lsize(All_Decay_time)=2
	Killwaves/z Wv_Mini	
	String Thsi_Unit=Unity(a_Amplitude,0,G_mininumber)
	String SAmp_Final =num2Str(a_Amplitude[G_mininumber])
	SAmp_Final =RemoveEnding (SAmp_Final, "e-"+stringfromlist(( itemsinlist(SAmp_Final,"-")-1),SAmp_Final,"-"))
	VAriable Corrected_AVG=round(Str2Num(SAmp_Final)*Str2Num(StringFromlist(1,Thsi_Unit)))
	SAmp_Final=Num2Str(Corrected_AVG)
	String Notes= "Amp: "+SAmp_Final+Stringfromlist(0,Thsi_Unit)+"A \rDecay: "+Unity_Time(G_mininumber)
	titlebox LEG, win=Analysis_minis,frame=0,title=Notes, Fsize=14//, Disable=0
	Align_by_dAdt(1)
End

// ******************************************************************************************************

Function /S Unity_Time(Pnt_num)

	Variable Pnt_Num
	Wave a_Decaytime
	Variable Pnt=a_Decaytime[Pnt_Num]
	String Unit
	If (Pnt<1 && Pnt>=0.001)
		Unit=Num2Str(Pnt*1000)+" ms"
	Endif
	If (Pnt<0.001 && Pnt>=0.000001)
		Unit=Num2Str(Pnt*1000000)+" us"
	Endif
	IF (Strlen(Unit)>0)
	Return Unit
	Else
	Return "??"
	Endif
End

// ******************************************************************************************************

///--------------------------- This part of the Function is intended to highlight the points ---------------------------
//------------------------------whenever you click them at the "Amplitudes" tab in the ----------------------------
// --------------------------------------"Analysis_minis" window----------------------------------------


Function Hook(s)

	STRUCT WMWinHookStruct &s
	String Wave_Name
	ControlInfo /W=Analysis_Minis Which_Wave
	Wave_Name="Only:"+S_Value
	Variable State= getkeystate(0) //Is Shift pressed?
	switch(s.eventCode)
	case 5: // Mouseclick
		Getmouse /w=Analysis_Minis#Data_Display
		if (V_left<530 && V_Top<400 && V_left>0 && V_Top>0)
			If (State==4) //yes, shift's pressed
				 Force_EPSC(S_Value, Str2Num( stringbykey( "HITPOINT",tracefrompixel (V_left+340, V_Top+36, Wave_name))))
			endif
			if (strlen(tracefrompixel (V_left+340, V_Top+36,"Window:Analysis_Minis#Data_Display;Only:Amps"))>0)
				Modify_Point(STR2NUM( stringbykey( "HITPOINT",tracefrompixel (V_left+340, V_Top+36, "only:Amps"))),1)		
			endif
		endif
	break
	endswitch

End

// ******************************************************************************************************

Function EPSC_Num(ctrlName,varNum,varStr,varName) : SetVariableControl

	String ctrlName
	Variable varNum
	String varStr,varName
	NVar /sdfr=root: G_Mininumber
	Modify_Point(G_mininumber,1)

End

// ******************************************************************************************************

Function Modify_Point(Point_x,Set_Mod)

	Variable Point_x, Set_Mod
	make/o/n=(1,3) /t W_WaveList=""
	getwindow Analysis_Minis#Data_Display wavelist
	if (strlen(W_WaveList[0][1])==0 || numtype(strlen(W_WaveList[0][1]))==2)
		return 0
	endif
	wave Amps, Minis, All_Baseline_Vals, Pt_time_Amp, All_Decay_time, Start_Fit
	Variable Selected_Point=Point_x
	NVar /sdfr=root: Highlighted_Point, G_miniNumber
	Setactivesubwindow Analysis_Minis#Data_Display
	Wave Amps
	ModifyGraph /W=Analysis_Minis#Data_Display rgb(Amps[Highlighted_Point])=(0,0,52224)
	ModifyGraph  /W=Analysis_Minis#Data_Display rgb(Amps[Selected_Point])=(65280,0,0)
	Highlighted_Point=Selected_Point
	G_Mininumber=Selected_Point
	Slide_Graph(Selected_Point)
	
	If (Set_Mod==1)	
		PressNext("Modify_Point")
	EndIf
	
end

// ******************************************************************************************************

Function Slide_Graph(Selected_Point)

	Variable Selected_Point
	Wave a_Timestamp
	String Axis_Data= axisinfo ("Analysis_Minis#Data_Display", "Bottom")
	String Axis_Range, Comm2, Axis_Name, Pt1, Pt2, Pt1a, Pt2a
	Variable Start, Finish, Delta
	Axis_Range= stringbykey("SETAXISCMD",Axis_Data,":",";")
	String expr="([[:alpha:]]+) ([[:alpha:]]+) ([[:digit:]]+).([[:digit:]]+),([[:digit:]]+).([[:digit:]]+)"
	SplitString/E=(expr) Axis_Range, Comm2, Axis_Name, Pt1, Pt1a, Pt2,Pt2a
	Pt1+="."+Pt1a
	Pt2+="."+Pt2a	
	Start=Str2num(Pt1)
	Finish=Str2Num(Pt2)
	Delta=(Finish-Start)/10
	If (a_Timestamp[Selected_Point]>Finish || a_Timestamp[Selected_Point]<Start)
		SetAxis  /W=Analysis_Minis#Data_Display bottom (a_Timestamp[Selected_Point]-Delta),(a_Timestamp[Selected_Point]+Finish-Start-Delta)
	Endif

End

// ******************************************************************************************************

function Display_and_Modify()

	Variable /g ROOT:Highlighted_Point
	Setwindow Analysis_Minis, hook(WMWinHookStruct)=hook, hookevents=0
	Setactivesubwindow Analysis_Minis#Data_Display

end

// ******************************************************************************************************

Function Force_EPSC(Wave_name, EPSC_Ref_Pnt)

	String Wave_Name
	Variable EPSC_Ref_Pnt
	Variable i, EPSC_Num,eightypercent, twentypercent, amplitude, decaytime,twentypn, peakpn, baseline, peak, PeaKVal, PeakLocation,PeakLocation_Row
	Wave a_timestamp, Minis, A_amplitude, Amps,a_Baseline,All_Baseline_Vals,a_Risetime,a_Charge,a_Decaytime, Start_Fit, All_Decay_time 
	NVar /sdfr=root: G_Baseline, G_Mini_Size,G_Decay_Time, G_mini_Number
	Wavestats/q /r=[EPSC_Ref_Pnt-G_Baseline, EPSC_Ref_Pnt+G_Baseline] $Wave_Name
	Wave temp=$Wave_Name
	ControlInfo /W=Analysis_Minis Positive
	If (V_value==0)
		PeakVal=V_min
		PeakLocation=V_minloc
		PeakLocation_Row=V_minrowloc
		if (Detect_Mini(EPSC_Num, temp, mEPSC, G_Mini_Size, V_Minloc)==0)
			return 0
		endif
	Else
		PeakVal=V_max
		PeakLocation=V_maxloc
		PeakLocation_Row=V_maxrowloc
		if (Detect_Mini(EPSC_Num, temp, mEPSC, G_Mini_Size, V_maxloc)==0)
			return 0
		endif
	EndIF
	For (i=0;i<numpnts(a_Timestamp);i+=1)
		If(PeakLocation<=a_timestamp[i])
			EPSC_Num=i
			Break
		EndIf
	endfor
	
	//Check_Waves()
	//doupdate
	
	
	
	if (waveexists(Start_Fit)==0)
		Make /n=1 Start_Fit
	endif
	if (waveexists(Minis)==0)
	Make/o /n=(G_Mini_Size) Minis
endif

if (waveexists(All_Baseline_Vals)==0)
	Make/o /n=10 All_Baseline_Vals
endif
if (waveexists(All_Decay_time)==0)
	Make/o /n=(ceil(G_Mini_size/3)) All_Decay_time
endif
	Insertpoints EPSC_Num,1, a_timestamp,Amps,a_Baseline,A_amplitude,a_Risetime,a_Charge,a_Decaytime, Start_Fit
	Insertpoints /M=1 EPSC_Num,1,Minis,All_Baseline_Vals , All_Decay_time	
	a_timestamp[EPSC_Num]=PeakLocation
	Amps[EPSC_Num]=PeakVal
	a_Baseline[EPSC_Num]=Mean(Temp,(PeakLocation-G_Baseline*deltax(Temp)), (PeakLocation-(G_Baseline-10)*deltax(Temp)))
	A_amplitude[EPSC_Num]=Amps[EPSC_Num]-a_Baseline[EPSC_Num]
	Minis[][EPSC_Num]=Temp[p+(PeakLocation_Row-G_Baseline)]
	All_Baseline_Vals[][EPSC_Num]=Mean(Temp,(PeakLocation-G_Baseline*deltax(Temp)), (PeakLocation-(G_Baseline-10)*deltax(Temp)))


	Variable Ref_Decay=PeakLocation_Row-G_Baseline
	//Charge
	Duplicate /O /R=[PeakLocation_Row-G_Baseline, PeakLocation_Row-G_Baseline+G_Mini_Size] Temp avgsubtracted
	avgsubtracted -= a_Baseline[EPSC_Num]
	Integrate avgsubtracted /D=integratedmini
	a_Charge[EPSC_Num]= sum (integratedmini)
	//Risetime
	Amplitude=PeakVal- a_Baseline[EPSC_Num]
	peakpn=PeakLocation_Row
	twentypercent = amplitude * 0.2 + a_Baseline[EPSC_Num]
	eightypercent = amplitude * 0.8 + a_Baseline[EPSC_Num]
	findlevel   /Q /R=[PeakLocation_Row-G_Baseline,peakpn] Temp, twentypercent 
	twentypn=V_LevelX
	findlevel /Q /R=[PeakLocation_Row-G_Baseline, peakpn] Temp, eightypercent 
	a_Risetime[EPSC_Num]= (V_LevelX - twentypn)	
	//Decaytime
	make /O /N=3 W_coef
	Make /O /N=1 W_fitConstants
	twentypercent = peakval - (amplitude * 0.2)
	eightypercent = peakval - amplitude * 0.8
	findlevel   /R=[peakpn, peakpn+G_Mini_Size*2] Temp, twentypercent
	twentypn=V_Levelx
	findlevel /R=[peakpn, peakpn+G_Mini_Size*2] Temp, eightypercent 
	CurveFit/Q /NTHR=0 /N /W=2 exp_XOffset  Temp[X2Pnt(Temp,twentypn), X2Pnt(Temp,V_LevelX)] /D /NWOK		
	All_Decay_time[][EPSC_Num]=W_coef[0]+W_coef[1]*exp(-(((p+X2Pnt(Temp,twentypn))*Deltax(Temp))-W_fitConstants[0])/W_coef[2])
	Start_Fit[EPSC_Num]=X2Pnt(Temp,twentypn)-Ref_Decay
	a_Decaytime[EPSC_Num]= W_coef(2)
	Wave_name="Fit_"+Wave_name
	removefromgraph /Z /W=Analysis_Minis#Data_Display $Wave_name
	Make_AVG_PSC("Force")
	String Final= Update_Output_Text()
	TitleBox  Results Win=Analysis_Minis, Title=Final
	PressNext("Force")
end

// ******************************************************************************************************

/////////////////////////////////////////////////////////////////////////////////////
// /////////// ------------End of the "Highlight Point" part --------------// ///////////
////////////////////////////////////////////////////////////////////////////////////

////////////////////////////////////////////////////////////////////////////////////
// ///////////-------------Panel interface management--------------////////////////
////////////////////////////////////////////////////////////////////////////////////


// ******************************************************************************************************

Function Minicontroller() : Panel

	PauseUpdate; Silent 1		// building window...
	Dowindow /K Analysis_Minis
	NewPanel/K=1 /W=(500,576,1400,1176) /N=Analysis_Minis
	vars()
	SetDrawLayer /w=Analysis_Minis UserBack
	DrawRect /W=Analysis_Minis 10,36,310,350
	DrawRect /W=Analysis_Minis 10,360,310,420
	DIsplay /Host=Analysis_minis /W=(10,36,170,240) /n=Mini_Wave /Hide=1
	Modifygraph /W=Analysis_Minis#Mini_Wave Frameinset=1, Framestyle=4	
	Display /Host = Analysis_Minis /Hide=0 /N=Data_Display /W=(340,36,880,470)
	Modifygraph /W=Analysis_Minis#Data_Display Frameinset=1, Framestyle=4
	Panel_Display(0)
	Tabcontrol Main, Size={880,550},pos={5,0}//,proc=Content
	Tabcontrol Main, tablabel(1) ="Analyze", proc=Tab_Mngt
	Tabcontrol Main, tablabel(0) ="Detect", proc=Tab_Mngt
	Set_Ana_PArams(0)
end

// ******************************************************************************************************

Function Tab_Mngt(tab):Tabcontrol

	Struct WMTabControlAction &tab
 		SetDrawLayer /K UserBack
 	NVar /sdfr=root: G_Mininumber
	Switch (tab.tab)
		Case 0:
			SetDrawLayer/w=Analysis_Minis /K UserBack
			SetDrawLayer /w=Analysis_Minis UserBack
			DrawRect /W=Analysis_Minis 10,36,310,350
			DrawRect /W=Analysis_Minis 10,360,310,420
			Panel_Display(0)
			Panel_Analyze(1)
		break
		Case 1:
			SetDrawLayer/w=Analysis_Minis /K UserBack
			SetDrawLayer /w=Analysis_Minis UserBack
			DrawRect /W=Analysis_Minis 10,36,310,240
			Panel_Analyze(0)
			Panel_Display(1)
			Modify_point(G_mininumber,1)
		break
	endswitch

end

// ******************************************************************************************************

Function DIsplay_mini_Graph()

//	VAriable New_OR_Existing
	Wave a_Baseline,a_amplitude
	Duplicate/o a_Amplitude, Amps
	ControlINfo /W=Analysis_minis Positive
	If (V_Value==0)
	Amps+=a_Baseline
	Else
	Amps=a_Baseline-a_Amplitude
	EndIf
	Wave Amps_Time=a_timestamp
	ControlInfo /W=Analysis_Minis Which_Wave
	Wave Test=$S_Value
	AppendToGraph /W=Analysis_Minis#Data_Display Test
	AppendToGraph/W=Analysis_Minis#Data_Display Amps vs Amps_Time
	ModifyGraph /W=Analysis_Minis#Data_Display rgb($S_Value)=(0,0,0),mode(Amps)=3,rgb(Amps)=(0,0,52224),marker(Amps)=19

end

// ******************************************************************************************************

Function Panel_Display(Hide_Controls)	

	Variable Hide_Controls
	Svar /sdfr=root: Wave_2P, Host_Datafolder
	titlebox 		Manual, 					Disable=Hide_Controls	
	titlebox 		Manual, 					Disable=Hide_Controls
 	Button 			isolate, 						Disable=Hide_Controls
	Button 			Select_Waves, 				Disable=Hide_Controls
	SetVariable 		setvar1, 					Disable=Hide_Controls
	SetVariable 		signalwindow, 				Disable=Hide_Controls
	SetVariable 		noisewindow, 				Disable=Hide_Controls
	SetVariable 		stepsize, 					Disable=Hide_Controls
	SetVariable 		jump, 						Disable=Hide_Controls
	SetVariable 		Size, 						Disable=Hide_Controls
	SetVariable 		Decay, 						Disable=Hide_Controls
	SetVariable 		Baseline, 					Disable=Hide_Controls
	SetVariable 		Tolerance,					Disable=Hide_Controls
	Button 			killallresults, 				Disable=Hide_Controls
	If (Hide_Controls!=1)
		SetVariable 		Which_Wave, 				Disable=2//Hide_Controls
	Else
		SetVariable 		Which_Wave, 				Disable=Hide_Controls
	Endif
	titlebox 			Select_Wave, 				Disable=Hide_Controls
	TitleBox  		Results, 						Disable=Hide_Controls
	Button 			Create_EPSC_Template, 	Disable=Hide_Controls
	Button 			Display_Wave, 				Disable=Hide_Controls
	SetVariable 		setdecaylow, 				Disable=Hide_Controls
	SetVariable 		setdecayhigh, 				Disable=Hide_Controls
	titlebox 			Create_EPSC, 				Disable=Hide_Controls
	CheckBox 			Positive, 					Disable=Hide_Controls
	Checkbox 			Use_Template, 				Disable=Hide_Controls
	Button 			Read,							Disable=Hide_Controls
	Button 			Write,							Disable=Hide_Controls
//	If  (Strlen(Wave_2P)>2 && Strlen(Host_Datafolder)>3)
	If (Stringmatch(Wave_2P, "No Waves Selected")!=1)// && Stringmatch (Getdatafolder(1), Host_Datafolder)==1)
		ValDisplay 	signalwindow_Val, 			Disable=Hide_Controls
		ValDisplay 	noisewindow_Val, 			Disable=Hide_Controls
		ValDisplay 	stepsize_Val, 				Disable=Hide_Controls
		ValDisplay 	jump_Val, 					Disable=Hide_Controls
		ValDisplay 	setvar1_Val, 				Disable=Hide_Controls
		ValDisplay 	Size_Val, 					Disable=Hide_Controls
		Valdisplay 	Baseline_Val, 				Disable=Hide_Controls
		ValDisplay 	Decay_Val, 					Disable=Hide_Controls
	endif
//	endif

End

// ******************************************************************************************************

Function Panel_Analyze(Hide_Controls)

	Variable Hide_Controls
	SetWindow 	Analysis_minis#Mini_Wave  Hide=(Hide_Controls) 
	
	Button 		next, 					Disable=Hide_Controls
	Button 		pressprevious, 		Disable=Hide_Controls
	Button 		plot, 					Disable=Hide_Controls
	Button 		AVG_PSC, 				Disable=Hide_Controls
	Button 		Delete, 				Disable=Hide_Controls
	SetVariable G_mininumber,		Value=root:G_mininumber,			Disable=Hide_Controls
	Setvariable Hist_Bin_Freq, 		Value=root:G_Bin_Size_Freq,		Disable=Hide_Controls
	Setvariable Num_Bins_Freq, 		Value=root:G_Num_BIn_Freq,		Disable=Hide_Controls
	Setvariable Hist_Bin_Amp, 		Value=root:G_Bin_Size_Amp,		Disable=Hide_Controls
	Setvariable Num_Bins_Amp, 		Value=root:G_Num_BIn_Amp,		Disable=Hide_Controls	
	Setvariable Hist_Bin_Charge, 	Value=root:G_Bin_Size_Char,		Disable=Hide_Controls
	Setvariable Num_Bins_Charge, 	Value=root:G_Num_BIn_Char,		Disable=Hide_Controls
	Setvariable Hist_Bin_Rise,		Value=root:G_Bin_Size_Rise,		Disable=Hide_Controls
	Setvariable Num_Bins_Rise,		Value=root:G_Num_BIn_Rise,		Disable=Hide_Controls	
	Setvariable Hist_Bin_Decay,		Value=root:G_Bin_Size_Decay,	Disable=Hide_Controls
	Setvariable Num_Bins_Decay,		Value=root:G_Num_BIn_Decay,		Disable=Hide_Controls
	Titlebox 		Bin_Size, 			Disable=Hide_Controls
	Titlebox 		Num_Bins, 			Disable=Hide_Controls
	Titlebox 		Auto, 					Disable=Hide_Controls
	TitleBox 		LEG,					Disable=Hide_Controls

end

// ******************************************************************************************************

Function WaveSelectorPanel(CtrlName):Buttoncontrol

	String CtrlName
	Dowindow/K What_to_do
	Variable showWhat=1
	String panelName = "WaveSelector"
	Variable Button_Offset
//	Svar /sdfr=root: Host_Datafolder
//	setdatafolder $Host_DAtafolder
	if (WinType(panelName) == 7)
		DoWindow/F $panelName
	else
		NewPanel/K=1/N=$panelName/W=(180,180,450,540) as "Selector"
		ListBox WaveSelectorList,pos={10,13},size={250,220}
		// This function (MakeListIntoWaveSelector) does all the work of making the listbox control into a Wave Selector widget. It calls an Igor Pro Built in ipf file
		Button Cancel_Load,pos={150,330-Button_Offset},size={110,20},title="Cancel", Proc=Cancel_select	
		If (Stringmatch(CtrlName, "Existing")==1)	
			//renamewindow WaveSelector Choose_Analysis_Datafolder
			//panelName="Choose_Analysis_Datafolder"
			MakeListIntoWaveSelector(panelName, "WaveSelectorList", content = WMWS_DataFolders)//showWhat)
			PopupMenu sortKind, pos={155,240}, Size={20,35}, title="Sort By"
			MakePopupIntoWaveSelectorSort(panelName, "WaveSelectorList", "sortKind")	
			Button Existing_Exp,pos={9,330-Button_Offset},size={110,20},title="Done", Proc=Done		
		else		
			MakeListIntoWaveSelector(panelName, "WaveSelectorList", content = showWhat)
			PopupMenu sortKind, pos={155,240}, Size={20,35}, title="Sort Waves By"
			MakePopupIntoWaveSelectorSort(panelName, "WaveSelectorList", "sortKind")	
			Button Done,pos={9,330-Button_Offset},size={110,20},title="Done", Proc=Done
			SetVariable Output_wave_name,  Disable=2, pos={210,290}, Bodywidth=250,  FSize=16, Title=" ", Value=_Str:"Conc_Pulse"
			CheckBox Enable_output_Name_Change, Pos={10,270}, Title="Custom output wave name: ", Value=0, Fsize=12, proc=Enable_Input_WaveName
		Endif	
	endif
	
End

// ******************************************************************************************************

Function Cancel_select(Ctrlname):Buttoncontrol

	String CtrlName
	StrSwitch (CtrlName)
		Case "Cancel_Load":
			Dowindow/K WaveSelector
			Break
		Case "My_Bad":
			Dowindow/K Instructions
			Break
	EndSwitch

End

// ******************************************************************************************************

Function Enable_Input_WaveName(CtrlName, Check):CheckBoxControl

	String CtrlName
	Variable  Check
	If (Check==1)
		SetVariable Output_wave_name Win=WaveSelector, Disable=0
	Else
		SetVariable Output_wave_name Win=WaveSelector, Disable=2, Value=_Str:"Conc_Pulse"
	EndIf

end

// ******************************************************************************************************

Function vars()

	String Current_Folder
	String /G root:Wave_2P="No Waves Selected"//"No Waves Selected"
	Current_Folder = getdatafolder(1)
	Svar /sdfr=root: Wave_2P
	Variable H_Pos_An_panel, V_Pos_An_Panel
	CheckBox Positive,			Pos={20,260},Title="Detect Positive Peaks", VAlue=0,proc=template
	Checkbox Use_Template, 	pos= {23,320}, Title="Use data template", value=0, proc=template
	Button Select_Waves,pos={20,285},size={120,20},proc= WaveSelectorPanel,title="Select Waves"//, Fsize=18


	SetVariable Which_Wave,pos={60,440}, Bodywidth=300, Frame=0,  Size={250,40}, FSize=16, Title=" ",BarBackColor=0, Disable=2
	Execute "SetVariable Which_Wave, Value=_Str:"+num2char(34)+Wave_2P+num2char(34)
	
	Button isolate,pos={176,285},size={120,20},proc=pressisolate,title="Isolate minis"
	Button isolate,help={"starts isolation function according to set parameters"}, Disable=1
		
	Button killallresults,pos={176,315},size={120,20},proc=presskillall,title="Kill all results",fColor=(65535,16385,16385), Disable=1
	Button killallresults,help={"!!!Kills all results in the \"mini\" folder!!!"}

	SetVariable setvar1,pos={50,76},size={120,15},title="Threshold (Amps)", Bodywidth=70, labelBack=(65535,65535,65535),limits={-inf,inf,-1e-12},value= root:G_threshold,  proc=Set_Value, Disable=1
		ValDisplay setvar1_Val,pos={195,76},Title="= (pA)",  Bodywidth=40, Disable=1

	SetVariable signalwindow,pos={50,99},size={120,15},title="Signal win  (pts)  ", proc=Set_Value, BodyWidth=70, value= root:G_signalwindow,  labelBack=(65535,65535,65535), Disable=1
		ValDisplay signalwindow_Val,pos={195,99},Title="= (ms)",  Bodywidth=40, Disable=1

	SetVariable noisewindow,pos={50,122},size={120,15},title="Noise win  (pts)   ",value= root:G_noisewindow,  labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay noisewindow_Val,pos={195,122},Title="= (ms)",  Bodywidth=40, Disable=1

	SetVariable stepsize,pos={50,145},size={120,15},title="Step size (pts)    ",value= root:G_stepsize, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay stepsize_Val,pos={195,145},Title="= (ms)",  Bodywidth=40, Disable=1
	
	SetVariable jump,pos={50,168},size={120,15},title="Jump (pts)          ",value= root:G_jump, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay jump_Val,pos={195,168},Title="= (ms)",  Bodywidth=40, Disable=1
		
	SetVariable Size,pos={50,191},size={120,15},title="EPSC size (pts)    ",value=root:G_Mini_Size, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay Size_Val,pos={195,191},Title="= (ms)",  Bodywidth=40, Disable=1
		
	SetVariable Decay,pos={50,237},size={120,15},title="Decay time(pts)  ",value= root:G_Decay_time, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay Decay_Val,pos={195,237},Title="= (ms)",  Bodywidth=40, Disable=1
		
	SetVariable Baseline,pos={50,214},size={120,15},title="Baseline (pts)      ",value= root:G_Baseline, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, Disable=1
		ValDisplay Baseline_Val,pos={195,214},Title="= (ms)",  Bodywidth=40, Disable=1		
		
	SetVariable Tolerance, pos={176,260},size={120,20},title="Tolerance",value=root:G_Tolerance, labelBack=(65535,65535,65535), proc=Set_Value, BodyWidth=70, limits={0.1,1,0.05}, Disable=1

//******
	Button next,pos={245,40},size={60,25},proc=pressnext,Fsize=16, title="Next",help={"shows next mini"}, Disable=1
	Button pressprevious,pos={175,40},size={60,25},proc=pressnext,FSize=16,title="Prev",help={"shows previous mini"}, Disable=1
//	titlebox Auto, pos={180,90},frame=0,title= "Go to event:", Fsize=16, Disable=1
	Button delete,pos={175,67},size={130,25},proc=pressdelete,FSize=16, title="Delete mini",help={"deletes mEPSC number set in the left panel"}, Disable=1
	SetVariable G_mininumber,pos={175,94},size={130,25},title="PSC #",fSize=16,value= root:G_mininumber, Disable=1, Proc=EPSC_Num, Limits={0,10000,1}

//****	
	
	titlebox Create_EPSC, pos={170,370},frame=0,title= "Display EPSC Template", Fsize=12, Disable=1
	Button Create_EPSC_Template,pos={196,387},size={80,30},title="GO", Fsize=16, Proc=Display_EPSC_Template
	Button Create_EPSC_Template,help={"rejects mEPSC, which do not pass filter criteria, and deletes parameters from all waves"}, Disable=1
	Button Display_Wave pos={175,430},size={120,30},title="Show Wave", Fsize=16, proc=pressisolate

	SetVariable setdecaylow,pos={22,365},size={140,16},title="Rise Tau [s]   ",fSize=12,limits={-inf,inf,0.00001},value=root:G_Rise_Tau, Disable=1, proc=Set_Value
	SetVariable setdecayhigh,pos={22,390},size={140,16},title="Decay Tau [s]",fSize=12,limits={-inf,inf,0.00001},value= root:G_Decay_Tau, Disable=1, proc=Set_Value
	

	Button Read, pos={20,42}, Size={125,30}, Title="Load  Parameters", fSize=14, Proc=Analysis_Params, Disable=1
	Button Write, pos={175,42}, Size={125,30}, Title="Save  Parameters", fSize=14, Proc=Analysis_Params,  Disable=1
	
	Button AVG_PSC,pos={175,125},size={130,30},proc=Make_AVG_PSC,title="Display PSC Average", Disable=1
	Button plot,pos={215,270},size={97,50},proc=pressplot,title="Plot \rhistograms"
	Button plot,help={"plots all results in histograms"}, Disable=1
	H_Pos_An_panel=108
	V_Pos_An_Panel=270
	Titlebox Bin_Size, Fsize=14, Frame=0, Pos={90, V_Pos_An_Panel-20}, Title="Bin size", Disable=1
	Titlebox Num_Bins, FSize=14, Frame=0, Pos={165,V_Pos_An_Panel-20}, Title="# Bins", Disable=1
	
	Setvariable Hist_Bin_Freq, Pos={H_Pos_An_panel,V_Pos_An_Panel}, Size={50,20}, Title="Frequency ",fsize=12, bodywidth=80, Disable=1, Value=G_Bin_Size_Freq
	Setvariable Num_Bins_Freq, Pos={H_Pos_An_panel+82,V_Pos_An_Panel}, Size={20,20}, Title=" ",fsize=12, bodywidth=50, Disable=1,Value=root:G_Num_BIn_Freq
	
	Setvariable Hist_Bin_Amp, Pos={H_Pos_An_panel,V_Pos_An_Panel+25}, Size={50,20}, Title="Amplitude",fsize=12, bodywidth=80, Disable=1, Value=G_Bin_Size_Amp
	Setvariable Num_Bins_Amp, Pos={H_Pos_An_panel+82,V_Pos_An_Panel+25}, Size={20,20}, Title=" ",fsize=12, bodywidth=50, Disable=1, Value=root:G_Num_BIn_Amp
	
	Setvariable Hist_Bin_Charge, Pos={H_Pos_An_panel,V_Pos_An_Panel+25*2}, Size={50,20}, Title="Charge (C) ",fsize=12, bodywidth=80, Disable=1, Value=G_Bin_Size_Char
	Setvariable Num_Bins_Charge, Pos={H_Pos_An_panel+82,V_Pos_An_Panel+25*2}, Size={20,20}, Title=" ",fsize=12, bodywidth=50, Disable=1, Value=root:G_Num_BIn_Char
	
	Setvariable Hist_Bin_Rise, Pos={H_Pos_An_panel,V_Pos_An_Panel+25*3}, Size={50,20}, Title="Rise (s)   ",fsize=12, bodywidth=80, Disable=1, Value=G_Bin_Size_Rise
	Setvariable Num_Bins_Rise, Pos={H_Pos_An_panel+82,V_Pos_An_Panel+25*3}, Size={20,20}, Title=" ",fsize=12, bodywidth=50, Disable=1, Value=root:G_Num_BIn_Rise
	
	Setvariable Hist_Bin_Decay, Pos={H_Pos_An_panel,V_Pos_An_Panel+25*4}, Size={50,20}, Title="Decay (s)  ",fsize=12, bodywidth=80, Disable=1, Value=G_Bin_Size_Decay
	Setvariable Num_Bins_Decay, Pos={H_Pos_An_panel+82,V_Pos_An_Panel+25*4}, Size={20,20}, Title=" ",fsize=12, bodywidth=50, Disable=1, Value=root:G_Num_BIn_Decay
	
	Button FWD_x, Win=Analysis_Minis, pos={485,470},size={40,25},Title="\W549", proc=Axis_Range, Disable=0
	Button BACK_x, Win=Analysis_Minis, pos={445,470},size={40,25},Title="\W546", proc=Axis_Range, Disable=0
	Button Grow_x, Win=Analysis_Minis, pos={380,470},size={40,25},Title="\Z18+", proc=Axis_Range	, Disable=0
	Button Shrink_x, Win=Analysis_Minis, pos={340,470},size={40,25},Title="\Z18-", proc=Axis_Range, Disable=0
	Button Reset_x,Win=Analysis_Minis, pos={420,470},size={25,25},fColor=(65280,21760,0),Title="\Z16\f01Æ", proc=Axis_Range, Disable=0
	Button FWD_y, Win=Analysis_Minis, pos={315,285},size={25,40},Title="\W517", proc=Axis_Range, Disable=0
	Button BACK_y, Win=Analysis_Minis, pos={315,325},size={25,40},Title="\W523", proc=Axis_Range, Disable=0
	Button Grow_y, Win=Analysis_Minis, pos={315,390},size={25,40},Title="\Z18+", proc=Axis_Range, Disable=0
	Button Shrink_y, Win=Analysis_Minis, pos={315,430},size={25,40},Title="\Z18-", proc=Axis_Range, Disable=0
	Button Reset_y,Win=Analysis_Minis, pos={315,365},size={25,25},fColor=(65280,21760,0),Title="\Z16\f01Æ", proc=Axis_Range, Disable=0	
	Button Reset_ALL,Win=Analysis_Minis, pos={315,470},size={25,25},fColor=(52224,0,0),Title="\Z16\f01Æ", proc=Axis_Range, Disable=0
	
	TitleBox LEG, win=Analysis_Minis, Pos={175,170}, Disable=1
	
	Button New_Analysis, Win=Analysis_Minis, pos={5, 560}, Size={140,30}, FSize=18, Title="New analysis", proc=New_Ananlysis
	//titlebox New_Analysis_Info, pos={155,560},frame=0,title= "Creates a new Minis DataFolder", Fsize=12
	Button Existing, Win=Analysis_Minis, pos={175, 560}, Size={220,30}, FSize=18, Title="Go to existing analysis", proc=WaveSelectorPanel
	Button Cancel_it, Win=Analysis_Minis, pos={795, 560}, Size={90,30}, FSize=18, Title="Close", proc=Instructions_Handling
	
end

// ******************************************************************************************************


Function template(CB_Struct) : CheckBoxControl
	STRUCT WMCheckboxAction &CB_Struct
	//print CB_Struct.eventcode,CB_Struct.ctrlname
	if (CB_Struct.eventcode!=2 && strlen(CB_Struct.ctrlname)>0)
		return 0
	endif
	Variable Minimum, Maximum
	Controlinfo /w=Analysis_minis Use_Template
	if (V_Value==0)
		return 0
	endif
	wave EPSC_Template, AVG_d
	if (waveexists(AVG_d)==0)
		print "*************************  No events selected for template  *************************"
		Checkbox Use_Template win=Analysis_minis, value=0
		abort
	endif
	Duplicate/o AVG_d, EPSC_Template_ori
	Variable First_pnt=EPSC_Template_ori[0]
	EPSC_Template_Ori-=First_pnt
	//wavestats EPSC_Template_ori
	Controlinfo /w=Analysis_minis Positive
	Minimum=Wavemin(EPSC_Template_Ori)
	Maximum=Wavemax(EPSC_Template_Ori)
	if (V_Value)
		EPSC_Template_Ori/=Maximum
	else
		EPSC_Template_Ori/=-Minimum
	endif
	Duplicate/o EPSC_Template_Ori,EPSC_Template
end

// ******************************************************************************************************


Function Display_EPSC_Template(CtrlName):Buttoncontrol
	
	String CtrlName
	NVar /sdfr=root: G_Mini_Size, G_Rise_Tau, G_Decay_Tau
	Variable Minim, Absolute
	ControlINfo /W=Analysis_minis Positive
	Absolute=V_Value
	Controlinfo /w=Analysis_Minis Which_wave
	IF (Strlen(S_Value)==0)
		Print "**************** U MUST SELECT A WAVE FIRST! DO IT!****************"
		abort
	ENDIF
	Controlinfo /W=Analysis_Minis Use_Template

	if (V_Value)
	
		Wave EPSC_Template_ori, AVG_minis
		if (waveexists(AVG_Minis)==0 || waveexists(EPSC_Template_ori)==0)
			print "*****************   Template doesn't exist.   *****************" 
			return 0
		else
				Duplicate/o EPSC_Template_ori, EPSC_Template
		endif
	else
	
		Controlinfo /w=Analysis_Minis Which_wave
		If (Absolute==0)
			make/o/n=(G_Mini_Size) epsc_Template= -1*  (1-exp(-(x*deltax($S_Value))/G_Rise_Tau))*  (exp(-(x*deltax($S_Value))/G_Decay_Tau))
		Else
			make/o/n=(G_Mini_Size) epsc_Template=  (1-exp(-(x*deltax($S_Value))/G_Rise_Tau))*  (exp(-(x*deltax($S_Value))/G_Decay_Tau))
		EndIF
	endif
	Controlinfo /w=Analysis_Minis Which_wave
	//Minim=wavemin(EPSC_Template)
	setscale /p x,0,deltax($S_Value),"s",EPSC_Template
	dowindow/k EPSCTemplate
	Display/k=1 /N=EPSCTemplate EPSC_Template as "EPSC Template"

end

// ******************************************************************************************************

Function Done(CtrlName):ButtonControl

	String CtrlName
	Svar /sdfr=root: Wave_2P, Host_Datafolder
//	NVar G_signalwindow,G_noisewindow,G_stepsize,G_jump,G_threshold,G_Mini_Size,G_Decay_time, G_Baseline
	String panelName = "WaveSelector"
	String List=WS_SelectedObjectsList("WaveSelector","WaveSelectorList")
	String This_datafolder, Final_Name, DF_Waves
	Variable i, Num_Pnts_Max, Wv_Index
	if (Stringmatch(Ctrlname, "Existing_Exp")==1)
		This_datafolder=Stringfromlist(0,list)

		Host_Datafolder=This_datafolder
		IF (Exists ("Host_DataFolder")==0)
			SetDatafolder This_datafolder
		Else
			SetdataFolder $Host_Datafolder
		Endif
		DF_Waves=Wavelist("*",";","")
		For (i=0;i<Itemsinlist(DF_Waves);i+=1)
			If(Numpnts($Stringfromlist(i,DF_Waves))>Num_Pnts_Max)
				Num_Pnts_Max=Numpnts($Stringfromlist(i,DF_Waves))
				Wv_Index=i
			Endif
		Endfor
		Final_Name=Stringfromlist(Wv_Index,DF_Waves)
		dowindow Analysis_Minis
		if (V_flag)
			Setvariable Which_Wave Win=Analysis_Minis , Value=_Str:Final_Name
		endif
		Minicontroller()
	Else
		String List_Wv=Stringfromlist(0,list)
		This_datafolder=Removefromlist((Stringfromlist((itemsinlist(List_Wv,":")-1),List_Wv,":")), List_Wv,":")
		String Wv2P, Final_Destination, Dup_Final_Name
		Wave temp
		If (ItemsinList(List)==0)
			String /g Info="        Select at Least one wave from the list, my friend!         "
			newpanel /k=1 /n=Instructions /w=(300,200,800,350)
			Titlebox  TB1, Fsize=16, Frame=0, Anchor=LT, Pos={20,20}, Size={1,1}, Variable= Info
			Button My_Bad, Win=Instructions, Fsize=18, pos={140,85}, Size = {200,40}, Title="Oops, my bad!!", proc=Cancel_select	
			Abort
		EndIf
		ControlInfo /W=WaveSelector Output_wave_name // The Wavename will be stored in this SetVariable field
		Final_Name=S_Value
		SetDataFolder $This_DataFolder
		If (Itemsinlist(List)>1)
			For (i=0;I<itemsinlist(list);i+=1)		
				If (i==0)
					Wave W1= $Stringfromlist(0,list)
					Wave W2 = $Stringfromlist(1,list)
					Concatenate/NP /O {W1,W2}, Temp
					i+=1			
				Else
					Duplicate/O Temp, W1b	
					Wave W2 = $Stringfromlist(i,list)
					Concatenate/NP /O {W1b, W2}, Temp			
				EndIf	
			EndFor				
		Else
			Duplicate/O $Stringfromlist(0,list), Temp
		EndIf
		ControlInfo /W=WaveSelector Enable_Output_Name_CHange
		If (V_Value==0)
			If (itemsinlist(list)==1)
				Final_Name=StringFromList((Itemsinlist(List,":")-1),Stringfromlist(0,list),":")//Removes the folders and subfolders from the list, leaving only the Wavename
			Else
				ControlInfo /W=WaveSelector Output_wave_name
				Final_Name=S_Value
			endif
		Endif	
		ControlInfo /W=WaveSelector Enable_Output_Name_CHange
		If (Waveexists($Final_Name)==0)
			Rename Temp, $Final_Name
		Else
			Duplicate/o Temp, $Final_Name
			Killwaves/z Temp
		EndIf
	//Wave's ready!	
		if (Stringmatch(This_DataFolder,Host_Datafolder)!=1)
			Final_Destination=Host_Datafolder+final_name
			This_DataFolder+=final_name
			Dup_Final_Name=Final_Name+"2"
			Duplicate/o $Final_Name, $Dup_Final_Name	
			If (Waveexists($Host_Datafolder+final_name)==1)
				Killwaves $Host_Datafolder+final_name
			Endif
			MoveWave $This_DataFolder, $Final_Destination
			If (Itemsinlist(list)>1)
				Rename $Dup_Final_Name, $Final_Name
			Else
				Killwaves /z  $Dup_Final_Name
			EndIf
		Endif	
		SetdataFolder $Host_Datafolder
	Endif
	NVar /sdfr=root: G_signalwindow,G_noisewindow,G_stepsize,G_jump,G_threshold,G_Mini_Size,G_Decay_time, G_Baseline
	Wave_2P=Final_Name
	Execute "ValDisplay  setvar1_Val 		Win=Analysis_Minis, Disable=0 , Value = "+Num2str(G_threshold*1e12)
	Execute "ValDisplay  signalwindow_Val 	Win=Analysis_Minis, Disable=0 ,Value = "+Num2str(G_signalwindow*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  noisewindow_Val 	Win=Analysis_Minis, Disable=0, Value = "+Num2str(G_noisewindow*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  stepsize_Val 		Win=Analysis_Minis, Disable=0, Value = "+Num2str(G_stepsize*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  jump_Val 		Win=Analysis_Minis, Disable=0, Value = "+Num2str(G_jump*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  Size_Val 		Win=Analysis_Minis, Disable=0, Value = "+Num2Str(G_Mini_Size*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  Decay_Val 		Win=Analysis_Minis, Disable=0, Value = "+Num2Str(G_Decay_time*Deltax($Wave_2P)*1000)
	Execute "ValDisplay  Baseline_Val 		Win=Analysis_Minis, Disable=0, Value = "+Num2Str(G_Baseline*Deltax($Wave_2P)*1000)	
	Execute "SetVariable Which_Wave 	Win=Analysis_Minis, Value=_Str:"+num2char(34)+Final_Name+num2char(34)
	CheckBox Enable_output_Name_Change Win=WaveSelector,  Value=0
	Dowindow /k $PanelName
	Killwaves/z W1b
	If (Waveexists(Minis)==1 && Waveexists(a_amplitude)==1 && Waveexists(a_timestamp)==1 && Waveexists(a_baseline)==1 && Waveexists(a_charge)==1 && Waveexists(a_decaytime)==1 && Waveexists(a_risetime)==1)
		DIsplay_mini_Graph()
		Display_and_Modify()
		String Final= Update_Output_Text()
		TitleBox  Results Win=Analysis_Minis, Pos={20, 480}, Title=Final, Fsize=14, Frame=0, Disable=0
	Endif
	Killdatafolder root:Packages
end

// ******************************************************************************************************

Function Set_Value(ctrlName,varNum,varStr,varName) : SetVariableControl

	String ctrlName ; Variable varNum ; String varStr ; String varName
	Nvar /sdfr=root: G_Rise_Tau, G_Decay_Tau
	ControlInfo /W=Analysis_Minis Which_Wave
	StrSwitch(CtrlName)
		Case "signalwindow":
			Execute "ValDisplay  signalwindow_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
		Break
		Case "NoiseWindow":
			Execute "ValDisplay  NoiseWindow_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
			Break
		Case "stepsize":
			Execute "ValDisplay  stepsize_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
			Break
		Case "jump":
			Execute "ValDisplay  jump_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
			Break
		Case "SetVar1":
			Execute "ValDisplay  SetVar1_Val Value = "+Num2Str(Varnum*1e12)
			Break
		Case "Size":
			Execute "ValDisplay  Size_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
			Break
		Case "Baseline":
			Execute "ValDisplay  Baseline_Val Value = "+Num2Str(Varnum*Deltax($S_Value)*1000)
			Break
	EndSwitch
	Set_Ana_PArams(1)

End

// ******************************************************************************************************

Function Axis_Range(ControlName):Buttoncontrol
String ControlName
ControlInfo /W=Analysis_Minis Which_Wave
Wave Test=$S_Value
Variable Begin_Axis_x, End_Axis_x,Begin_Axis_y, End_Axis_y
getaxis/q/w=Analysis_Minis#Data_Display bottom
Begin_Axis_x=V_Min
End_Axis_x=V_Max
getaxis/q/w=Analysis_Minis#Data_Display left
Begin_Axis_y=V_Min
End_Axis_y=V_Max
StrSwitch (ControlName)
	Case "Reset_ALL":
		Setaxis/A/W=Analysis_Minis#Data_Display
	break
	Case "Reset_x":
		Setaxis /W=Analysis_Minis#Data_Display bottom 0,numpnts(test)*deltax(Test)// Begin_Axis_x,(End_Axis_x-(End_Axis_x/4))
	break
	Case "Grow_x":
		Setaxis /W=Analysis_Minis#Data_Display bottom Begin_Axis_x,(End_Axis_x-(End_Axis_x/4))
	break
	Case "Shrink_x":
		Setaxis /W=Analysis_Minis#Data_Display bottom Begin_Axis_x,(End_Axis_x+(End_Axis_x/4))
	break
	Case "FWD_x":
		Setaxis /W=Analysis_Minis#Data_Display bottom Begin_Axis_x+(End_Axis_x-Begin_Axis_x)/5,End_Axis_x+(End_Axis_x-Begin_Axis_x)/5
	break
	Case "BACK_x":
		Setaxis /W=Analysis_Minis#Data_Display bottom Begin_Axis_x-(End_Axis_x-Begin_Axis_x)/5,End_Axis_x-(End_Axis_x-Begin_Axis_x)/5
	break
	
	Case "Reset_y":
		Setaxis /W=Analysis_Minis#Data_Display left Wavemin(test),Wavemax(test)
	break
	Case "Grow_y":
		Setaxis /W=Analysis_Minis#Data_Display left ( Begin_Axis_y-( Begin_Axis_y/4)),End_Axis_y
	break
	Case "Shrink_y":
		Setaxis /W=Analysis_Minis#Data_Display left ( Begin_Axis_y+( Begin_Axis_y/4)),End_Axis_y
	break
	Case "FWD_y":
		Setaxis /W=Analysis_Minis#Data_Display left Begin_Axis_y+(End_Axis_y-Begin_Axis_y)/5,End_Axis_y+(End_Axis_y-Begin_Axis_y)/5
	break
	Case "BACK_y":
		Setaxis /W=Analysis_Minis#Data_Display left Begin_Axis_y-(End_Axis_y-Begin_Axis_y)/5,End_Axis_y-(End_Axis_y-Begin_Axis_y)/5
	break
	
EndSwitch
end

function but()
Button Del_Pt, Win=Analysis_Minis, pos={612,300},size={80,25},Title="Delete Point", proc=Delete_point_Amps
end

Function Delete_point_Amps(CtrlName):Buttoncontrol
String CtrlName
Wave Amps,Amps_time
NVar /sdfr=root: Highlighted_Point
deletepoints Highlighted_Point,1,Amps
Deletepoints Highlighted_Point,1,Amps_Time
end

//------------------------------End of Panel interface management------------------------------

//_____________________________--Pie Chart for Mini detction--_________________________________

Function SimplePieChart(CenterX, CenterY, Radius, Values, Labels)
	//Potentially useful demonstration function for the associated pie-chart functions
	//Designed to create a pie chart at the given coordinates and size, from paired text and numeric waves containing the values and labels
	//Values assumed to represent 100% of data
	//Wedge "colors" limited to up to 5 shades of gray
	//Some effort is spent to make the shading work out nicely for arbitrary numbers of wedges
	//I have been using in the absolute coordinate system, may need some fixing to be coordinate-system agnostic

	Variable CenterX, CenterY, Radius
	Wave Values
	Wave /T Labels
	
	Variable Loop1, NumShades, Color, AltTags=.03, ArcMidPnt //AltTags value is the amount to space out a tag from the pie when it gets too crowded
	Duplicate /O Values, Degrees
	Integrate/P Values /D=Degrees
	Degrees=Degrees*360/sum(Values)
	if (numpnts(Values)<6)
		NumShades=numpnts(Values)
		AltTags=0
	else
		if (mod(numpnts(Values),5)!=1) //what's bad is if there is one left at the end, which would get the starting color
			NumShades=5
		else
			if (mod(numpnts(Values),4)!=1)
				NumShades=4
			else
				NumShades=3
			endif
		endif
	endif
	DrawWedge(CenterX, CenterY, 0, Degrees[0], Radius, 1,16019,65535)//36000, 36000, 36000)
	ArcMidPnt=Degrees[0]/2
	for (Loop1=0;Loop1<numpnts(Values)-1;Loop1+=1)
		Color=16000//36000+mod(Loop1+1,NumShades)*(24000/(NumShades-1))
		DrawWedge(CenterX, CenterY, Degrees[Loop1], Degrees[Loop1+1], Radius, 52428,1,1)//Color, Color+10000, Color+30000)
		ArcMidPnt=(Degrees[Loop1]+Degrees[Loop1+1])/2
	endfor
End		
		

Function DrawWedge(CenterX, CenterY, StartAngle, EndAngle, Radius, Red, Green, Blue)
	//Draw a wedge with the given center position through the given angles
	//Wedges have black line border and the given color
	//Angles in degrees, Center and radius graph relative
	//End Angle must be > Start Angle
	Variable CenterX, CenterY, StartAngle, EndAngle, Radius, Red, Green, Blue
	
	if (EndAngle-StartAngle>180)
		SetDrawEnv fillfgc=(Red, Green, Blue), linethick=0
		DrawPoly CenterX, CenterY, 1, 1, {0, 0, Radius*cos((StartAngle+180)*pi/180), Radius*sin((StartAngle+180)*pi/180), Radius*cos(EndAngle*pi/180), Radius*sin(EndAngle*pi/180), 0, 0}
		SetDrawEnv fillfgc=(Red,Green,Blue)
		DrawArc /X/Y CenterX, CenterY, Radius, StartAngle, StartAngle+180
		SetDrawEnv fillfgc=(Red, Green, Blue)
		DrawArc /X/Y CenterX, CenterY, Radius, StartAngle+180, EndAngle
	else
		SetDrawEnv fillfgc=(Red, Green, Blue), linethick=0
		DrawPoly CenterX, CenterY, 1, 1, {0, 0, Radius*cos(StartAngle*pi/180), Radius*sin(StartAngle*pi/180), Radius*cos(EndAngle*pi/180), Radius*sin(EndAngle*pi/180), 0, 0}
		SetDrawEnv fillfgc=(Red, Green, Blue)
		DrawArc /X/Y CenterX, CenterY, Radius, StartAngle, EndAngle
	endif
	DrawLine CenterX, CenterY, CenterX+Radius*cos(StartAngle*pi/180), CenterY+Radius*sin(StartAngle*pi/180)
	DrawLine CenterX, CenterY, CenterX+Radius*cos(EndAngle*pi/180), CenterY+Radius*sin(EndAngle*pi/180)
End

//_____________________________--End of Pie Chart for Mini detction--_________________________________

function Filter_by_Decay()




String ctrlName
	nvar /sdfr=root: G_mininumber, G_Threshold
	variable pointnumber=G_mininumber
	wave a_Amplitude, a_Risetime, a_Decaytime, a_Charge, a_Timestamp, mininumbers,a_Baseline,Amps, Minis, Start_Fit, All_Decay_time
	Svar /sdfr=root: Host_Datafolder
Wave a_decaytime,All_Baseline_Vals

variable i
for (i=0;i<numpnts(a_decaytime);i+=1)
if (abs(a_decaytime[i])>0.010 || numtype(a_decaytime[i])==2 || a_decaytime[i]<0 || ABS(a_amplitude[i])<ABS(G_Threshold))

//if (abs(a_amplitude[i])>50e-12)	
	Deletepoints /M=1 i,1, minis
	Deletepoints /M=1 i,1,All_Baseline_Vals
	Deletepoints /M=1 i,1,All_Decay_time
	Deletepoints i,1,a_Amplitude
	Deletepoints i,1,a_Risetime
	Deletepoints i,1,a_Decaytime
	Deletepoints i,1,a_Charge
	Deletepoints i,1,a_Timestamp
	Deletepoints i,1,a_Baseline
	Deletepoints i,1,Amps
	Deletepoints i,1,Start_fit
	i-=1
endif
endfor
Wavestats /q a_decaytime
for (i=0;i<numpnts(a_decaytime);i+=1)
break
if (abs(a_decaytime[i])>(abs(v_avg)+2*v_sdev))
	Deletepoints /M=1 i,1, minis
	Deletepoints /M=1 i,1,All_Baseline_Vals
	Deletepoints /M=1 i,1,All_Decay_time
	Deletepoints i,1,a_Amplitude
	Deletepoints i,1,a_Risetime
	Deletepoints i,1,a_Decaytime
	Deletepoints i,1,a_Charge
	Deletepoints i,1,a_Timestamp
	Deletepoints i,1,a_Baseline
	Deletepoints i,1,Amps
	Deletepoints i,1,Start_fit
	i-=1
endif

endfor
Align_by_dAdt(0)
end




static Function Align_by_dAdt(Continuum)
Variable Continuum
wave a_Amplitude, a_Risetime, a_Decaytime, a_Charge, a_Timestamp, mininumbers,a_Baseline,Amps, Minis, Start_Fit, All_Decay_time,avg_minis
make /o/n=(dimsize(minis,1)) Max_DIFs
make /o/n=(dimsize(minis,1)) Refs=x
Make /o/n=(2*dimsize(minis,0)) AVG_d=0
variable i
ControlINfo /W=Analysis_minis Positive
Variable Absolute=V_Value
for (i=0;i<dimsize(minis,1);i+=1)
	matrixop /o temp=col(minis,i)
	differentiate temp /D=Temp_DIF
	wavestats /q temp_DIF
	if (Absolute)
		Max_DIFs[i]=v_maxloc
	else
		Max_DIFs[i]=abs(V_Minloc)
	endif
endfor 
i=0
wavestats /q Max_DIFs
if (Continuum==0)
Variable /g dAdt_Bar=v_sdev //sets the bar for eliminating events that have an enormous rise time
endif
do
	if (max_difs[i]>dAdt_Bar+v_avg || max_difs[i]<-dAdt_Bar+v_avg || max_difs[i]==0)
		deletepoints i,1,max_difs
		deletepoints i,1,Refs		
		Deletepoints /M=1 i,1, minis
		Deletepoints /M=1 i,1,All_Baseline_Vals
		Deletepoints /M=1 i,1,All_Decay_time
		Deletepoints i,1,a_Amplitude
		Deletepoints i,1,a_Risetime
		Deletepoints i,1,a_Decaytime
		Deletepoints i,1,a_Charge
		Deletepoints i,1,a_Timestamp
		Deletepoints i,1,a_Baseline
		Deletepoints i,1,Amps
		Deletepoints i,1,Start_fit
	else
		i+=1
	endif
	if (i>=numpnts(max_difs))
		break
	endif
while (1)
wavestats /q Max_DIFs
for (i=0;i<numpnts(max_difs);i+=1)
	make /o /n=(dimsize(minis,0)) temp=minis[p][i]
	insertpoints 0,abs(v_max-Max_DIFs[i]),temp
	AVG_d[0,numpnts(temp)-1]+=temp
endfor
AVG_d/=numpnts(Max_DIFs)
Deletepoints 0,abs(V_max-v_min), AVG_d
Deletepoints dimsize(minis,0)-1-abs(V_max-v_min),numpnts(avg_d)-1, AVG_d
ControlInfo /W=Analysis_Minis Which_Wave
setscale /p x,0,deltax($S_Value),"s",AVG_d
killwaves /z temp_dif, refs,Max_DIFs

end











Function Analysis_Params(Function_RW):ButtonControl
	String Function_RW
	Wave An_Params
	Variable Val
	
	Nvar /sdfr=root: G_threshold, G_signalwindow, G_noisewindow, G_stepsize, G_jump, G_Mini_Size, G_Baseline, G_Decay_time, G_Tolerance, G_Rise_Tau, G_Decay_Tau
	StrSwitch (Function_RW)
		Case "Read":
			LoadWave/O //A=An_Params
			//Killwaves/Z An_Params
//			If (Waveexists (An_Params)==1)
			//	Duplicate/O $RemoveEnding(S_Wavenames), An_Params
			If (strlen(S_Wavenames)<=2)
				return 0
			endif
			wave An_Params=$RemoveEnding(S_Wavenames)
	//		endif
			
			Duplicate/o An_Params, root:Analysis_Parameters:An_Params	
			G_threshold		= 	An_Params[0]
			G_signalwindow	=	An_Params[1]
			G_noisewindow	=	An_Params[2]
			G_stepsize		=	An_Params[3]
			G_jump			=	An_Params[4]
			G_Mini_Size	=	An_Params[5]		 
			G_Baseline		=	An_Params[6]
			G_Decay_time	=	An_Params[7]
			G_Tolerance	=	An_Params[8]
			G_Rise_Tau		=	An_Params[9]
			G_Decay_Tau	=	An_Params[10]
			CheckBox Positive, win=Analysis_Minis, VAlue=An_Params[11]
			Killwaves $RemoveEnding(S_Wavenames)
		Break
		Case "Write":
			Make/o/n=12 An_Params
			ControlInfo /W=Analysis_Minis Positive
			An_Params[0]		=	G_threshold
			An_Params[1]		=	G_signalwindow
			An_Params[2]		=	G_noisewindow
			An_Params[3]		=	G_stepsize
			An_Params[4]		=	G_jump
			An_Params[5]		=	G_Mini_Size
			An_Params[6]		=	G_Baseline
			An_Params[7]		=	G_Decay_time
			An_Params[8]		=	G_Tolerance
			An_Params[9]		=	G_Rise_Tau
			An_Params[10]	=	G_Decay_Tau
			An_Params[11]	=	V_Value
			Save/C An_Params as "An_Params.ibw"
		Break
	EndSwitch
	

End

Function Set_Ana_PArams(Start)
	Variable Start
	NVar /sdfr=root: G_threshold, G_signalwindow, G_noisewindow, G_stepsize, G_jump, G_Mini_Size, G_Baseline, G_Decay_time, G_Tolerance, G_Rise_Tau, G_Decay_Tau
	String Current_Folder = getdatafolder(1)
	if (datafolderexists("root:Analysis_Parameters")==0)		
		NewDataFOlder root:Analysis_Parameters
		Make/o/n=12 An_Params
		ControlInfo /W=Analysis_Minis Positive
		An_Params[0]		=	G_threshold
		An_Params[1]		=	G_signalwindow
		An_Params[2]		=	G_noisewindow
		An_Params[3]		=	G_stepsize
		An_Params[4]		=	G_jump
		An_Params[5]		=	G_Mini_Size
		An_Params[6]		=	G_Baseline
		An_Params[7]		=	G_Decay_time
		An_Params[8]		=	G_Tolerance
		An_Params[9]		=	G_Rise_Tau
		An_Params[10]	=	G_Decay_Tau
		An_Params[11]	=	V_Value
		Duplicate/o An_Params, root:Analysis_Parameters:An_Params
	else		
		If (Waveexists(root:Analysis_Parameters:An_Params)==1 && Start==0) //Wave exists in Analysis_Parameters Folder and the routine is relaunched
			Duplicate/o root:Analysis_Parameters:An_Params, $Current_Folder+"An_Params"	
			If (Waveexists(An_Params)==1) //This line may seem redundant, but seriously, it is not. At least in Igor 6.03
				G_threshold		= 	An_Params[0]
				G_signalwindow	=	An_Params[1]
				G_noisewindow	=	An_Params[2]
				G_stepsize		=	An_Params[3]
				G_jump			=	An_Params[4]
				G_Mini_Size	=	An_Params[5]		 
				G_Baseline		=	An_Params[6]
				G_Decay_time	=	An_Params[7]
				G_Tolerance	=	An_Params[8]
				G_Rise_Tau		=	An_Params[9]
				G_Decay_Tau	=	An_Params[10]
				CheckBox Positive, win=Analysis_Minis, VAlue=An_Params[11]
			EndIf
		Else //Wave exists in Analysis_Parameters Folder and Needs to be updated or needs to be created
			ControlInfo /W=Analysis_Minis Positive
			If (Waveexists (An_Params)==0)
				Make/n=12 An_Params
			EndIf
			An_Params[0]		=	G_threshold
			An_Params[1]		=	G_signalwindow
			An_Params[2]		=	G_noisewindow
			An_Params[3]		=	G_stepsize
			An_Params[4]		=	G_jump
			An_Params[5]		=	G_Mini_Size
			An_Params[6]		=	G_Baseline
			An_Params[7]		=	G_Decay_time
			An_Params[8]		=	G_Tolerance
			An_Params[9]		=	G_Rise_Tau
			An_Params[10]	=	G_Decay_Tau
			An_Params[11]	=	V_Value
			Duplicate/o An_Params, root:Analysis_Parameters:An_Params	
		EndIf
	endif
	Setdatafolder  $Current_Folder
End

function Deconvolve(PSC_Wv)
wave PSC_Wv
wave Filtered_PSC=Filter_Wave(PSC_Wv)
variable G_Rise_Tau=600 //microsec - don't change this, it's not worth it
variable G_Decay_Tau=1 //microsec
string name
variable i, min_epsc

for (i=0;i<5;i+=1)
	make/o/n=(150) epsc_T= -1*  (1-exp(-x/G_Rise_Tau))*  (exp(-x/(G_Decay_Tau+i*5))) //increases tau in 5 microsseconds each iteration
	setscale /p x,0,deltax(PSC_Wv),"s",epsc_T
	min_epsc=wavemin(epsc_T)
	epsc_T/=min_epsc // normalizes the epsc template wave to 1
wave temp=Deconv_FFT(epsc_T,Filtered_PSC)
setscale /p x,0,deltax(PSC_Wv),"s",temp
name = "D_"+num2str(i)
duplicate/o temp, $name
print i
endfor
end

static function /wave Deconv_FFT(epsc_T,PSC_Wv)
wave epsc_T,PSC_Wv
FFT/OUT=1/DEST=Trace_FFT PSC_Wv
FFT/OUT=1/PAD={NumPnts(PSC_Wv)}/DEST=Template_FFT epsc_T
Make/o/N=(numpnts(Template_FFT)) /D/C DECFFT
DECFFT=Trace_FFT/Template_FFT
IFFT/DEST=DEC DECFFT
return DEC
end

Static Function /wave Filter_Wave(PSC_Wv) //filters the source wave
wave PSC_Wv
Duplicate/O PSC_Wv, filtered; DelayUpdate
Make/O/D/N=0 coefs; DelayUpdate
FilterFIR/DIM=0/LO={1e-05,0.1,101}/COEF coefs, filtered
return filtered
end

function Get_Peak(Wv)
wave Wv
make/o/n=1 Peak_Timestamp=0
make/o/n=1 Peak_Val=0
variable start
variable threshold = -1e-12
Variable Threshold_ori=threshold
threshold+=mean(Wv,0,0.001)
findpeak /m=(threshold) /N  /q /R=[start,inf] Wv
start=V_PeakLoc
Peak_Timestamp=start
Peak_Val=V_PeakVal

do
	findpeak /m=(threshold) /N  /q /R=(start,inf) Wv
	wavestats /q /r=(Peak_Timestamp[numpnts(Peak_Timestamp)-1],V_Peakloc) Wv
   if (v_flag==0 && abs(V_PeakVal-v_max)>abs(Threshold_ori)) //This avoids a bug that appears after the inverse Fourier is computed - some bumps that the FindPeak algorithm interprets as peaks
   		insertpoints numpnts(Peak_Timestamp),1,Peak_Timestamp
      insertpoints numpnts(Peak_Val),1,Peak_Val
      Peak_Timestamp[numpnts(Peak_Timestamp)-1]=V_PeakLoc
      PEak_Val[numpnts(Peak_Val)-1]=V_PeakVal
      start=V_PeakLoc+0.0005               
   else
      start=V_PeakLoc+0.0005               
   endif
while (V_Flag==0)
Display /k=1 Wv
Appendtograph PEak_Val vs Peak_Timestamp
ModifyGraph mode(Peak_Val)=3,marker(Peak_Val)=19,rgb(Peak_Val)=(0,0,0)
end
